WorkflowBuilder(Version=2.6.3)
WorkflowInput Source1 => #0
-> GroupWorkflow Task
    SubscribeSubject Draw3DQuad => #0
    SubscribeSubject QuadState
    -> PropertyMapping(Ambient, Diffuse, Specular) => #2
    #0, #2 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=60
      TranslationY=-33
      TranslationZ=-70
      ScaleX=1
      ScaleY=70
      ScaleZ=100
      MeshName=cube3d
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=1, Y=1, Z=1)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0

    WorkflowInput Source1
    -> GroupWorkflow "Standard Trial Settings"
        WorkflowInput Source1
        -> GroupWorkflow s2d25 => #1
            WorkflowInput Source1
            -> SpeedDiscSpecification2
              Trials
                SpeedDiscParameters2
                  Duration=2
                  Size=4.6542
                  Colour1=0
                  Colour2=1
                  numDots1=476
                  numDots2=476
                  dotLifeBool=0
                  dotLifetime=200
                  Contrast=1
                  VelocityXLeft=0
                  VelocityYLeft=0
                  CoherenceLeft=100
                  VelocityXRight=0
                  VelocityYRight=0
                  CoherenceRight=100
                  transXLeft=-100
                  transXRight=100
            -> GroupWorkflow EnsureSpeedDiscParameters
                WorkflowInput Source1
                -> ElementIndex => #1
                -> MemberSelector(Selector=Index) => #2
                #1 -> MemberSelector(Selector=Value.Duration) => #3
                ExternalizedMapping(Value(DisplayName=DotSize)) => #4
                ExternalizedMapping(Value(DisplayName=Colour1)) => #5
                ExternalizedMapping(Value(DisplayName=Colour2)) => #6
                ExternalizedMapping(Value(DisplayName=numDots1)) => #7
                ExternalizedMapping(Value(DisplayName=numDots2)) => #8
                ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
                ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
                ExternalizedMapping(Value(DisplayName=Contrast)) => #11
                ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
                ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
                ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
                ExternalizedMapping(Value(DisplayName=VelXright)) => #15
                ExternalizedMapping(Value(DisplayName=VelYright)) => #16
                ExternalizedMapping(Value(DisplayName=CohRight)) => #17
                ExternalizedMapping(Value(DisplayName=Duration)) => #18
                #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
                #1 -> MemberSelector(Selector=Value.Size) => #20
                #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
                #1 -> MemberSelector(Selector=Value.Colour1) => #22
                #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
                #1 -> MemberSelector(Selector=Value.Colour2) => #24
                #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
                #1 -> MemberSelector(Selector=Value.numDots1) => #26
                #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
                #1 -> MemberSelector(Selector=Value.numDots2) => #28
                #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
                #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
                #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
                #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
                #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
                #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
                #1 -> MemberSelector(Selector=Value.Contrast) => #35
                #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
                #32, #34, #36 -> Zip => #37
                #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
                #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
                #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
                #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
                #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
                #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
                #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
                #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
                #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
                #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
                #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
                #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
                #39, #41, #43, #45, #47, #49 -> Zip => #50
                #1 -> MemberSelector(Selector=Value.transXLeft) => #51
                ExternalizedMapping(Value(DisplayName=transXL)) => #52
                #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
                #1 -> MemberSelector(Selector=Value.transXRight) => #54
                ExternalizedMapping(Value(DisplayName=transXR)) => #55
                #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
                #53, #56 -> Zip => #57
                #30, #37, #50, #57 -> Zip
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1.Item1 as Id,
                    Item1.Item2 as Duration,
                    Item1.Item3 as Size,
                    Item1.Item4 as Colour1,
                    Item1.Item5 as Colour2,
                    Item1.Item6 as numDots1,
                    Item1.Item7 as numDots2,
                    Item2.Item1 as dotLifeBool,
                    Item2.Item2 as dotLifetime,
                    Item2.Item3 as Contrast,
                    Item3.Item1 as VelXLeft,
                    Item3.Item2 as VelYLeft,
                    Item3.Item3 as CohLeft,
                    Item3.Item4 as VelXRight,
                    Item3.Item5 as VelYRight,
                    Item3.Item6 as CohRight,
                    Item4.Item1 as transXL,
                    Item4.Item2 as transXR)
                -> WorkflowOutput
            -> WorkflowOutput
        Source3=#1 -> WorkflowOutput
    -> CreateObservable CreateTrial => #6
        WorkflowInput Source1 => #0
        -> Unit => #1
        SubscribeSubject StandardSpeedsList
        -> PropertyMapping(StandardSpeedsList) => #3
        SubscribeSubject StandardSpeedsProbsList
        -> PropertyMapping(StandardSpeedsProbList) => #5
        SubscribeSubject SpeedDifferencesList
        -> PropertyMapping(SpeedDifferenceList) => #7
        SubscribeSubject SpeedDifferenceProbList
        -> PropertyMapping(SpeedDifferenceProbList) => #9
        SubscribeSubject PerfTrackList
        -> PropertyMapping(PerfTrackList) => #11
        #1, #3, #5, #7, #9, #11 -> TrialManager_SpeedDiscrimination
          StandardSpeedsList(float=16, float=32, float=64, float=128, float=256)
          StandardSpeedsProbList(float=25, float=25, float=25, float=25, float=25)
          SpeedDifferenceList
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
          SpeedDifferenceProbList
            ArrayOfFloat(float=25, float=25, float=25, float=25)
            ArrayOfFloat(float=50, float=50, float=0, float=0)
            ArrayOfFloat(float=0, float=50, float=50, float=0)
            ArrayOfFloat(float=0, float=25, float=25, float=50)
            ArrayOfFloat(float=0, float=50, float=50, float=0)
          PerfTrackList
            ArrayOfArrayOfInt
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
            ArrayOfArrayOfInt
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
            ArrayOfArrayOfInt
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
            ArrayOfArrayOfInt
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
            ArrayOfArrayOfInt
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
              ArrayOfInt(int=4, int=4, int=5, int=5)
          rightInARow(int=1, int=-1, int=-1, int=-1, int=-1)
          maxInARow=5
          autoBias=false
          biasScaling=0
          pRightManual=0.5
          minPRight=0
        -> SelectMany ThisTrial
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2)
            -> BehaviorSubject TrialInfo
            #0 -> GroupWorkflow DotTextures
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1) => #1
                -> MemberSelector(Selector=Item1)
                -> PropertyMapping(LeftVelX) => #3
                #1 -> MemberSelector(Selector=Item2)
                -> PropertyMapping(RightVelX) => #5
                #3, #5 -> GroupWorkflow CreateTextures
                    SubscribeSubject Parameters
                    -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
                    SubscribeSubject Borders
                    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
                    SubscribeSubject DrawStimuli => #4
                    #3, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-180, Top=180) => #5
                    Bonsai.Shaders.UpdateFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedTime)
                    -> Take(Count=1) => #8
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=VelYLeft) => #10
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=CohLeft)
                    -> PropertyMapping(Coherence) => #13
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=CohRight)
                    -> PropertyMapping(Coherence) => #16
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=VelYRight) => #18
                    ExternalizedMapping(Value(DisplayName=LeftVelX))
                    -> DoubleProperty(Value=128)
                    -> Skip(Count=1) => #21
                    #8, #21 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #25
                    ExternalizedMapping(Value(DisplayName=RightVelX))
                    -> DoubleProperty(Value=64)
                    -> Skip(Count=1) => #28
                    #8, #28 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #32
                    #10, #8 -> Zip
                    -> Multiply
                    -> PropertyMapping(VelY) => #35
                    #18, #8 -> Zip
                    -> Multiply
                    -> PropertyMapping(VelY) => #38
                    #5, #1, #25, #13, #35 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-2.13333344)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-2.13333344, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-2.13333344)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-2.13333344, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-2.13333344)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-2.13333344, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-2.13333344)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-2.13333344, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureLeft
                    -> WorkflowOutput
                    #5, #1, #32, #16, #38 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-1.06666672, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.06666672, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.06666672, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-1.06666672, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-180, right=180, top=180, bottom=-180)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureRight
                -> Unit
                -> BehaviorSubject ReadyToDraw => #8
                SubscribeSubject EndStimulus => #9
                #8, #9 -> TakeUntil
                -> WorkflowOutput

            GroupWorkflow "Calculate ISI Duration"
                SubscribeSubject "ISI Lower"
                -> PropertyMapping(Lower) => #1
                SubscribeSubject "ISI Upper"
                -> PropertyMapping(Upper) => #3
                #1, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> WorkflowOutput
            -> PropertyMapping(DueTime) => #5
            GroupWorkflow GetResponse => #6
                SubscribeSubject ResponseWindowDelay
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT0.5S, Period=PT0S) => #3
                SubscribeSubject ResponseWindowLength
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(ResponseWindowLength) => #6
                #6, #3 -> SelectMany Response(Description="Workflow that encapsulates the various possible response paradigms")
                    WorkflowInput Source1 => #0
                    -> Condition "Passive Trial Type" => #1
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=1))
                        -> WorkflowOutput
                    GroupWorkflow "Passive Trial Response" => #2
                        SubscribeSubject TrialInfo
                        -> MemberSelector(Selector=Item3) => #1
                        -> Condition "Left Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #4
                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #6
                        #6, #4 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #1 -> Condition "Right Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #13
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #15
                        #15, #13 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)

                        SubscribeSubject StimulusEnded
                        -> WorkflowOutput
                    #2, #1 -> SubscribeWhen
                    -> Unit => #4
                    #0 -> Condition "Active-any Trial Type" => #5
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=2))
                        -> WorkflowOutput
                    GroupWorkflow "Active-any Trial Response" => #6
                        SubscribeSubject LeftLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=-1) => #2
                        SubscribeSubject RightLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=1) => #5
                        #2, #5 -> Amb
                        -> Condition GaveResponse? => #7
                            WorkflowInput Source1
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> Condition LeftFaster
                            SubscribeSubject TrialInfo
                            -> MemberSelector(Selector=Item3)
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #10
                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #12
                        #12, #10 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #7 -> Condition RightFaster
                            SubscribeSubject TrialInfo
                            -> MemberSelector(Selector=Item3)
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #19
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #21
                        #21, #19 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)

                        SubscribeSubject StimulusEnded
                        -> WorkflowOutput
                    #6, #5 -> SubscribeWhen
                    -> Unit => #8
                    #0 -> Condition "Active-noabort Trial Type" => #9
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=3))
                        -> WorkflowOutput
                    GroupWorkflow "Active-noabort Trial Response" => #10
                        Disable ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Disable Timer(DueTime=PT5S, Period=PT0S)
                        -> Disable FloatProperty(Value=0)

                        SubscribeSubject StimulusEnded
                        -> WorkflowOutput

                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #6
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #8
                        SubscribeSubject TrialInfo
                        -> MemberSelector(Selector=Item3) => #10
                        -> Condition "Left Stimulus Faster" => #11
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        #11, #6 -> Zip
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #10 -> Condition "Right Stimulus Faster" => #16
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        #16, #8 -> Zip
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)
                    #10, #9 -> SubscribeWhen
                    -> Unit => #12
                    #0 -> Condition "Active Trial Type" => #13
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=4))
                        -> WorkflowOutput
                    ExternalizedMapping(ResponseWindowLength)
                    -> GroupWorkflow "Active Trial Response" => #15
                        ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Timer(DueTime=PT5S, Period=PT0S)
                        -> FloatProperty(Value=0) => #2
                        SubscribeSubject TrialInfo => #3
                        SubscribeSubject PerfTrackList
                        -> PropertyMapping(perfTracking(Selector=it)) => #5
                        SubscribeSubject LeftLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=-1) => #8
                        SubscribeSubject RightLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=1) => #11
                        #8, #11, #2 -> Amb => #12
                        #3, #12 -> Zip => #13
                        #13, #5 -> ComputeTrialResult_SpeedDiscrimination => #14
                          perfTracking
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                              ArrayOfInt(int=4, int=4, int=5, int=5)
                        -> MemberSelector(Selector=Item1)
                        -> MulticastSubject PerfTrackList
                        -> Unit => #17
                        #14 -> MemberSelector(Selector=Item2) => #18
                        -> Condition IncorrectResponse
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject IncorrectResponse => #21
                        #18 -> Condition LeftCorrect
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #24
                        #18 -> Condition RightCorrect
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #27
                        #18 -> Condition NoResponse
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject NoResponse => #30
                        #21, #24, #27, #30 -> Merge
                        -> Take(Count=1) => #32
                        #17, #32 -> Zip
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #18 -> MulticastSubject TrialResults
                    #15, #13 -> SubscribeWhen
                    -> Unit => #17
                    #4, #8, #12, #17 -> Merge
                    -> First
                    -> WorkflowOutput
                -> WorkflowOutput
            GroupWorkflow TexturedModels
                GroupWorkflow DrawTexturedModels => #0
                    SubscribeSubject Draw3DStim => #0
                    -> Sink BindLeft => #1
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureLeft => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    SubscribeSubject Borders => #2
                    -> MemberSelector(Selector=Item1) => #3
                    #2 -> MemberSelector(Selector=Item2) => #4
                    #3, #4 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleY) => #7
                    #2 -> MemberSelector(Selector=Item3) => #8
                    #2 -> MemberSelector(Selector=Item4) => #9
                    #9, #8 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleX) => #12
                    SubscribeSubject Parameters => #13
                    -> MemberSelector(Selector=transXL)
                    -> PropertyMapping(TranslationX) => #15
                    #1, #12, #15, #7 -> IncludeWorkflow => #16
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-100
                      TranslationY=0
                      TranslationZ=-200
                      ScaleX=360
                      ScaleY=360
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #0 -> Sink BindRight => #17
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureRight => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    #13 -> MemberSelector(Selector=transXR)
                    -> PropertyMapping(TranslationX) => #19
                    #17, #12, #19, #7 -> IncludeWorkflow => #20
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=100
                      TranslationY=0
                      TranslationZ=-200
                      ScaleX=360
                      ScaleY=360
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #16, #20 -> Zip
                    -> WorkflowOutput
                SubscribeSubject ReadyToDraw
                -> Disable Skip(Count=10)
                -> Bonsai.Shaders.SampleOnRenderFrame => #3
                #0, #3 -> SubscribeWhen => #4
                SubscribeSubject EndStimulus => #5
                #4, #5 -> TakeUntil
                -> Last
                -> WorkflowOutput
            -> BehaviorSubject StimulusEnded => #8
            #8, #6 -> Zip
            -> Unit
            -> MulticastSubject TrialOver => #11
            #11, #5 -> Bonsai.Shaders.Delay(DueTime=PT1S) => #12
            SubscribeSubject TimeSinceLastLick
            -> Condition
                WorkflowInput Source1 => #0
                SubscribeSubject NoLickTime
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput
            -> Bonsai.Shaders.SampleOnRenderFrame => #15
            #12, #15 -> Zip
            -> Unit
            -> WorkflowOutput

            GroupWorkflow "Draw Masking Planes"
                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=0
                  TranslationZ=-25
                  ScaleX=1000
                  ScaleY=2500
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="Background plane (stops flickering)")

                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=40
                  TranslationZ=-7
                  ScaleX=300
                  ScaleY=25
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="ceiling mask for pole")

            GroupWorkflow UpdateQuad
                SubscribeSubject Draw3DStim => #0
                SubscribeSubject StimulusEnded
                -> FloatProperty(Value=0) => #2
                SubscribeSubject ReadyToDraw
                -> Disable Skip(Count=10)
                -> Bonsai.Shaders.SampleOnRenderFrame => #5
                #0, #5 -> SubscribeWhen
                -> Take(Count=1)
                -> FloatProperty(Value=1) => #8
                #2, #8 -> Merge
                -> MulticastSubject QuadState
                -> WorkflowOutput

            GroupWorkflow EndStimulus
                SubscribeSubject StimulusDuration
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT3S)
                -> Unit
                -> WorkflowOutput
            -> BehaviorSubject EndStimulus

            Disable GroupWorkflow "Check No Early Licks"
                SubscribeSubject MotionDelay
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT0.5S, Period=PT0S)
                -> BooleanProperty(Value=false) => #4
                SubscribeSubject LeftLick
                -> Skip(Count=1) => #6
                SubscribeSubject RightLick
                -> Skip(Count=1) => #8
                #6, #8 -> Amb
                -> BooleanProperty(Value=true) => #10
                #4, #10 -> Amb
                -> First
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Unit
                -> MulticastSubject AbortTrial
                -> WorkflowOutput

            Disable GroupWorkflow EndStimulus
                SubscribeSubject Parameters
                -> MemberSelector(Selector=Duration)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT2S)
                -> WorkflowOutput
            -> Disable GroupWorkflow CheckRunTrial
                SubscribeSubject WheelSpeed => #0
                WorkflowInput Source1 => #1
                #0, #1 -> TakeUntil
                -> Average
                -> Condition
                    WorkflowInput Source1
                    -> LessThan(Operand=DoubleProperty(Value=-50))
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> MulticastSubject runTrial
                -> WorkflowOutput
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil)
    SubscribeSubject TimeoutTime
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #9
    #6, #9 -> Bonsai.Shaders.Delay(DueTime=PT0S)
    -> Concat
    -> Repeat => #12
    GroupWorkflow "Begin Task" => #13
        SubscribeSubject TrialType
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> WorkflowOutput
    #12, #13 -> SubscribeWhen
    -> WorkflowOutput
-> WorkflowOutput
#0 -> GroupWorkflow "Performance Tracking"
    WorkflowInput Source1 => #0
    -> Disable GroupWorkflow "Initialise Performance Tracking"
        ExternalizedMapping(SpeedDifferences(DisplayName=SpeedDifferences4), SpeedDifferenceProbs(DisplayName=SpeedDifferenceProbs4), StandardSpeed(DisplayName=StandardSpeed4))
        -> InitialisePerformanceTracking_SpeedDiscrimination(StandardSpeed=400, SpeedDifferences(float=-0.9, float=0.9), SpeedDifferenceProbs(float=50, float=50)) => #1
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject SpeedDifferenes4 => #3
        ExternalizedMapping(SpeedDifferences(DisplayName=SpeedDifferences3), SpeedDifferenceProbs(DisplayName=SpeedDifferenceProbs3), StandardSpeed(DisplayName=StandardSpeed3))
        -> InitialisePerformanceTracking_SpeedDiscrimination(StandardSpeed=300, SpeedDifferences(float=-0.9, float=0.9), SpeedDifferenceProbs(float=50, float=50)) => #5
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject SpeedDifferenes3 => #7
        #5 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject SpeedDiffereneProbs3 => #9
        #5 -> MemberSelector(Selector=Item3)
        -> BehaviorSubject PerfTrack3 => #11
        #5 -> MemberSelector(Selector=Item4)
        -> BehaviorSubject StandardSpeed3 => #13
        ExternalizedMapping(SpeedDifferences(DisplayName=SpeedDifferences2), SpeedDifferenceProbs(DisplayName=SpeedDifferenceProbs2), StandardSpeed(DisplayName=StandardSpeed2))
        -> InitialisePerformanceTracking_SpeedDiscrimination(StandardSpeed=200, SpeedDifferences(float=-0.9, float=0.9), SpeedDifferenceProbs(float=50, float=50)) => #15
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject SpeedDifferenes2 => #17
        #15 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject SpeedDiffereneProbs2 => #19
        #15 -> MemberSelector(Selector=Item3)
        -> BehaviorSubject PerfTrack2 => #21
        #15 -> MemberSelector(Selector=Item4)
        -> BehaviorSubject StandardSpeed2 => #23
        ExternalizedMapping(SpeedDifferences(DisplayName=SpeedDifferences1), SpeedDifferenceProbs(DisplayName=SpeedDifferenceProbs1), StandardSpeed(DisplayName=StandardSpeed1))
        -> InitialisePerformanceTracking_SpeedDiscrimination(StandardSpeed=100, SpeedDifferences(float=-0.9, float=0.9), SpeedDifferenceProbs(float=50, float=50)) => #25
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject SpeedDifferenes1 => #27
        #27, #17, #7, #3 -> Merge
        -> ToList
        -> BehaviorSubject SpeedDifferencesList
        #1 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject SpeedDiffereneProbs4 => #32
        #25 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject SpeedDiffereneProbs1 => #34
        #34, #19, #9, #32 -> Merge
        -> ToList
        -> BehaviorSubject SpeedDifferenceProbList
        #1 -> MemberSelector(Selector=Item3)
        -> BehaviorSubject PerfTrack4 => #39
        #25 -> MemberSelector(Selector=Item3)
        -> BehaviorSubject PerfTrack1 => #41
        #41, #21, #11, #39 -> Merge
        -> ToList
        -> BehaviorSubject PerfTrackList
        #1 -> MemberSelector(Selector=Item4)
        -> BehaviorSubject StandardSpeed4 => #46
        #25 -> MemberSelector(Selector=Item4)
        -> BehaviorSubject StandardSpeed1 => #48
        #48, #23, #13, #46 -> Merge
        -> ToList
        -> BehaviorSubject StandardSpeedsList

        WorkflowInput Source1 => #52
        -> FloatProperty(Value=25) => #53
        #52 -> FloatProperty(Value=25) => #54
        #52 -> FloatProperty(Value=25) => #55
        #52 -> FloatProperty(Value=25) => #56
        #53, #54, #55, #56 -> Merge
        -> Take(Count=4)
        -> ToList
        -> BehaviorSubject StandardSpeedsProbsList
    #0 -> GroupWorkflow "Track Engagement"
        SubscribeSubject TrialResults => #0
        ExternalizedMapping(pEngagedThreshold) => #1
        WorkflowInput Source1 => #2
        -> IntProperty(Value=20) => #3
        -> PropertyMapping(maxListLength) => #4
        #3 -> PropertyMapping(Count) => #5
        #2 -> IntProperty(Value=0) => #6
        #6, #5 -> RepeatCount(Count=0)
        -> ToList
        -> PropertyMapping(trialResponses) => #9
        #0, #9, #4, #1 -> TrackTaskEngagement_SpeedDiscrimination(trialResponses="", maxListLength=20, pEngagedThreshold=0.8) => #10
        -> MemberSelector(Selector=Item1)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject DoTimeout
        #10 -> MemberSelector(Selector=Item2)

        SubscribeSubject DoTimeout
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> GroupWorkflow "Timeout Parameters"
            WorkflowInput Source1
            -> FloatProperty(Value=10)
            -> MulticastSubject TimeoutTime
            -> Delay(DueTime=PT8S)
            -> FloatProperty(Value=0)
            -> MulticastSubject TimeoutTime
            -> WorkflowOutput

        Bonsai.Windows.Input.KeyDown(Filter=P, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> MulticastSubject DoTimeout
    #0 -> Disable GroupWorkflow "Initialise Performance Trackingv2"
        Bonsai.IO.CsvReader(FileName=ratioProbsTranspose.csv, ListSeparator=",", ScanPattern=%f, SkipRows=0) => #0
        -> GroupWorkflow GetStandardSpeeds
            WorkflowInput Source1 => #0
            -> Index(Operand=IntProperty(Value=1))
            -> First => #2
            #0 -> Index(Operand=IntProperty(Value=2))
            -> First => #4
            #0 -> Index(Operand=IntProperty(Value=3))
            -> First => #6
            #0 -> Index(Operand=IntProperty(Value=4))
            -> First => #8
            #2, #4, #6, #8 -> Merge
            -> ToList
            -> Disable BehaviorSubject StandardSpeedsList
            -> WorkflowOutput
        #0 -> GroupWorkflow GetStandardSpeedProbs
            WorkflowInput Source1 => #0
            -> Index(Operand=IntProperty(Value=1))
            -> ToList
            -> Index(Operand=IntProperty(Value=1)) => #3
            #0 -> Index(Operand=IntProperty(Value=2))
            -> ToList
            -> Index(Operand=IntProperty(Value=1)) => #6
            #0 -> Index(Operand=IntProperty(Value=3))
            -> ToList
            -> Index(Operand=IntProperty(Value=1)) => #9
            #0 -> Index(Operand=IntProperty(Value=4))
            -> ToList
            -> Index(Operand=IntProperty(Value=1)) => #12
            #3, #6, #9, #12 -> Merge
            -> ToList
            -> Disable BehaviorSubject StandardSpeedsProbsList
        #0 -> GroupWorkflow GetSpeedDifferences
            WorkflowInput Source1 => #0
            -> Skip(Count=1)
            -> Index(Operand=IntProperty(Value=0))
            -> ToList => #3
            #0 -> Skip(Count=1)
            -> Index(Operand=IntProperty(Value=0))
            -> ToList => #6
            #0 -> Skip(Count=1)
            -> Index(Operand=IntProperty(Value=0))
            -> ToList => #9
            #0 -> Skip(Count=1)
            -> Index(Operand=IntProperty(Value=0))
            -> ToList => #12
            #3, #6, #9, #12 -> Merge
            -> Disable BehaviorSubject SpeedDifferencesList
        #0 -> GroupWorkflow GetSpeedDifferenceProbs(Description="Generates a list of lists of speed ratio probabilities, index as: [speed][ratio]")
            WorkflowInput Source1 => #0
            -> Index(Operand=IntProperty(Value=1))
            -> Skip(Count=2)
            -> ToList => #3
            #0 -> Index(Operand=IntProperty(Value=2))
            -> Skip(Count=2)
            -> ToList => #6
            #0 -> Index(Operand=IntProperty(Value=3))
            -> Skip(Count=2)
            -> ToList => #9
            #0 -> Index(Operand=IntProperty(Value=4))
            -> Skip(Count=2)
            -> ToList => #12
            #3, #6, #9, #12 -> Merge
            -> ToList
            -> Disable BehaviorSubject SpeedDifferenceProbList
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it[0][10]
    #0 -> Bonsai.IO.CsvReader(FileName=ratioProbsTranspose_smaller.csv, ListSeparator=",", ScanPattern=%f, SkipRows=0)
    -> ToList
    -> ReadMetaData_SpeedDiscrimination => #6
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject StandardSpeedsList
    -> MemberSelector(Selector=Count)
    #6 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject StandardSpeedsProbsList
    #6 -> MemberSelector(Selector=Item3)
    -> BehaviorSubject SpeedDifferencesList
    #6 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject SpeedDifferenceProbList
    #6 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject PerfTrackList

GroupWorkflow "Display And Resources"
    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=800
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources
    -> Bonsai.Shaders.SampleOnUpdateFrame => #6
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=false)
    -> Bonsai.Shaders.SampleOnRenderFrame => #8
    #6, #8 -> TakeUntil
    -> WorkflowOutput

    Bonsai.Shaders.RenderFrame
    -> Disable GroupWorkflow FrameEventLoggers => #12
        WorkflowInput Source1 => #0
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #2
        #0, #2 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_WheelLog.csv) => #3
        SubscribeSubject EyeName
        -> PropertyMapping(FileName) => #5
        #3, #5 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_EyeLog.csv) => #6
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #8
        #6, #8 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_Trial.csv) => #9
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #11
        #9, #11 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_PDAsync.csv)
        -> WorkflowOutput
    -> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=1000)
    -> Bonsai.Scripting.ExpressionTransform => #14
      Expression:
        new(
        ViewMatrix as ViewMatrix,
        ProjectionMatrix as ProjectionMatrix,
        ViewMatrix.Row3.Yzw as Light)
    -> BehaviorSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
        WorkflowInput Source1
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
        ExternalizedMapping(Path)
        -> Bonsai.Dsp.MatrixReader
          Path=meshmap_py_minus_hires.bin
          FileName=meshmap_py_minus_hires.bin
          Offset=0
          SampleRate=10000000
          ChannelCount=1001
          BufferLength=3003
          Depth=F32
          Layout=RowMajor
        -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
        -> Bonsai.Vision.Flip(Mode=Vertical)
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
        #1, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
        -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
        -> WorkflowOutput

        Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
        -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

        Disable ExternalizedMapping(Path)
        -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, FileName=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
        -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
        -> Disable Bonsai.Vision.ConvertToImage
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    #14 -> BehaviorSubject Draw3DQuad
    #12 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)

    Bonsai.Shaders.UpdateFrame => #21
    -> PublishSubject DrawStimuli
    #21 -> PublishSubject DrawQuad

GroupWorkflow "Initialise Variables"
    GroupWorkflow Borders(Description="Set values for borders of display")
        ExternalizedMapping(Value(DisplayName=TopBorder))
        -> FloatProperty(Value=180)
        -> ReplaySubject Top(BufferSize=nil) => #2
        ExternalizedMapping(Value(DisplayName=BottomBorder))
        -> FloatProperty(Value=-180)
        -> ReplaySubject Bottom(BufferSize=nil) => #5
        ExternalizedMapping(Value(DisplayName=LeftBorder))
        -> FloatProperty(Value=-180)
        -> ReplaySubject Left(BufferSize=nil) => #8
        ExternalizedMapping(Value(DisplayName=RightBorder))
        -> FloatProperty(Value=180)
        -> ReplaySubject Right(BufferSize=nil) => #11
        #2, #5, #8, #11 -> Zip
        -> ReplaySubject Borders(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Timing Variables"
        FloatProperty(Value=0.5)
        -> BehaviorSubject MotionDelay

        DoubleProperty(Value=1)
        -> BehaviorSubject "ISI Lower"

        DoubleProperty(Value=1)
        -> BehaviorSubject "ISI Upper"

        FloatProperty(Value=0.5)
        -> BehaviorSubject ResponseWindowDelay

        FloatProperty(Value=5)
        -> BehaviorSubject ResponseWindowLength

        DoubleProperty(Value=1000)
        -> BehaviorSubject NoLickTime

        FloatProperty(Value=2)
        -> BehaviorSubject StimulusDuration

        FloatProperty(Value=0)
        -> BehaviorSubject TimeoutTime

        BooleanProperty(Value=false)
        -> BehaviorSubject DoTimeout

    GroupWorkflow TrialOutcomes
        Unit
        -> BehaviorSubject IncorrectResponse

        Unit
        -> BehaviorSubject LeftCorrect

        Unit
        -> BehaviorSubject RightCorrect

        Unit
        -> BehaviorSubject NoResponse

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=0)
    -> BehaviorSubject runTrial

GroupWorkflow SelectTrialBlock
    SubscribeSubject TrialType => #0
    -> Condition "Passive Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> GroupWorkflow "Passive Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=10)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=0)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=1)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput
    #0 -> Condition "Active-any Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=2))
        -> WorkflowOutput
    -> GroupWorkflow "Active-any Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=7)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=0)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput
    #0 -> Condition "Active-noabort Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=3))
        -> WorkflowOutput
    -> GroupWorkflow "Active-noabort Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=5)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=1)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput
    #0 -> Condition "Active Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=4))
        -> WorkflowOutput
    -> GroupWorkflow "Active Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=3)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=1)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput

    GroupWorkflow "Manual Trial Type Selection"
        Bonsai.Windows.Input.KeyDown(Filter=Z, SuppressRepetitions=false)
        -> FloatProperty(Value=1) => #1
        Bonsai.Windows.Input.KeyDown(Filter=X, SuppressRepetitions=false)
        -> FloatProperty(Value=2) => #3
        Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
        -> FloatProperty(Value=3) => #5
        Bonsai.Windows.Input.KeyDown(Filter=V, SuppressRepetitions=false)
        -> FloatProperty(Value=4) => #7
        #1, #3, #5, #7 -> Merge
        -> BehaviorSubject lastKeyState
        -> BehaviorSubject delayKeyState

        SubscribeSubject delayKeyState
        -> First
        -> Delay(DueTime=PT0.5S)
        -> Unit
        -> BehaviorSubject TrialOver

    SubscribeSubject delayKeyState => #10
    SubscribeSubject TrialOver => #11
    #10, #11 -> Sample
    -> BehaviorSubject TrialType

GroupWorkflow "Control and Give Reward"
    GroupWorkflow "Generate Reward Serial String"
        FloatProperty(Value=200)
        -> BehaviorSubject RightValveOpenTime

        FloatProperty(Value=300)
        -> BehaviorSubject LeftValveOpenTime

        StringProperty(Value=l) => #4
        SubscribeSubject LeftValveOpenTime
        -> PropertyMapping(Value)
        -> FloatProperty(Value=300)
        -> Bonsai.Scripting.ExpressionTransform => #8
          Expression: it.ToString()
        #4, #8 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> BehaviorSubject LeftRewardString

        StringProperty(Value=r) => #12
        SubscribeSubject RightValveOpenTime
        -> PropertyMapping(Value)
        -> FloatProperty(Value=200)
        -> Bonsai.Scripting.ExpressionTransform => #16
          Expression: it.ToString()
        #12, #16 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> BehaviorSubject RightRewardString

    SubscribeSubject LeftCorrect => #1
    SubscribeSubject LeftRewardString
    -> PropertyMapping(Value) => #3
    #1, #3 -> StringProperty(Value=l300)
    -> MulticastSubject SerialToSend

    SubscribeSubject RightCorrect => #6
    SubscribeSubject RightRewardString
    -> PropertyMapping(Value) => #8
    #6, #8 -> StringProperty(Value=r200)
    -> MulticastSubject SerialToSend

    StringProperty
    -> BehaviorSubject SerialToSend

    SubscribeSubject SerialToSend
    -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoInput, NewLine=\r)

GroupWorkflow "Get Licks"
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> Unit => #1
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> Unit => #3
    Unit => #4
    #1, #4 -> Merge
    -> BehaviorSubject RightLick
    #3, #4 -> Merge
    -> BehaviorSubject LeftLick

    GroupWorkflow "Check For Recent Licks"
        SubscribeSubject LeftLick
        -> IntProperty(Value=1) => #1
        SubscribeSubject RightLick
        -> IntProperty(Value=1) => #3
        IntProperty(Value=0) => #4
        #1, #3, #4 -> Merge
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
        ExternalizedMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT0.05S)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #11
        #11, #7 -> CombineLatest
        -> Subtract
        -> Divide(Operand=DoubleProperty(Value=1000))
        -> BehaviorSubject TimeSinceLastLick

ExternalizedMapping(Value(DisplayName=StimulusTag))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value)
    -> StringProperty(Value="") => #1
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #1 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #1 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #1 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
