WorkflowBuilder(Version=2.7.1)
GroupWorkflow "Display And Resources"
    Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Maximized
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources => #5
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=false) => #6
    SubscribeSubject EndWorkflow
    -> Skip(Count=1) => #8
    #6, #8 -> Sample
    -> Bonsai.Shaders.Delay(DueTime=PT15S)
    -> Bonsai.Shaders.SampleOnRenderFrame => #11
    #5, #11 -> TakeUntil
    -> WorkflowOutput

    Bonsai.Shaders.UpdateFrame => #14
    -> PublishSubject DrawStimuli
    #14 -> PublishSubject DrawQuad

    Disable GroupWorkflow "Dome Render"
        Bonsai.Shaders.RenderFrame
        -> Disable GroupWorkflow FrameEventLoggers => #1
            WorkflowInput Source1 => #0
            SubscribeSubject WheelName
            -> PropertyMapping(FileName) => #2
            #0, #2 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_WheelLog.csv) => #3
            SubscribeSubject EyeName
            -> PropertyMapping(FileName) => #5
            #3, #5 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_EyeLog.csv) => #6
            SubscribeSubject TrialName
            -> PropertyMapping(FileName) => #8
            #6, #8 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_Trial.csv) => #9
            SubscribeSubject PDname
            -> PropertyMapping(FileName) => #11
            #9, #11 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_PDAsync.csv)
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=1000)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression:
            new(
            ViewMatrix as ViewMatrix,
            ProjectionMatrix as ProjectionMatrix,
            ViewMatrix.Row3.Yzw as Light)
        -> BehaviorSubject Draw3DStim
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
        -> GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
            ExternalizedMapping(Path)
            -> Bonsai.Dsp.MatrixReader(Path=meshmap_py_minus_hires.bin, Offset=0, SampleRate=10000000, ChannelCount=1001, BufferLength=3003, Depth=F32, Layout=RowMajor)
            -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
            -> Bonsai.Vision.Flip(Mode=Vertical)
            -> Bonsai.Shaders.LatestOnUpdateFrame
            -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
            -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
            -> WorkflowOutput

            Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
            -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

            Disable ExternalizedMapping(Path)
            -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
            -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
            -> Disable Bonsai.Vision.ConvertToImage
        -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
        #3 -> BehaviorSubject Draw3DQuad
        #1 -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)

    Disable Bonsai.Shaders.RenderFrame
    -> Disable GroupWorkflow FrameEventLoggers => #19
        WorkflowInput Source1 => #0
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #2
        #0, #2 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_WheelLog.csv) => #3
        SubscribeSubject EyeName
        -> PropertyMapping(FileName) => #5
        #3, #5 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_EyeLog.csv) => #6
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #8
        #6, #8 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_Trial.csv) => #9
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #11
        #9, #11 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_PDAsync.csv)
        -> WorkflowOutput
    -> Disable Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #21
      Expression:
        new(
        ViewMatrix as ViewMatrix,
        ProjectionMatrix as ProjectionMatrix,
        ViewMatrix.Row3.Yzw as Light)
    -> Disable BehaviorSubject Draw3DStim
    -> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    #21 -> Disable BehaviorSubject Draw3DQuad
    #19 -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)

    Bonsai.Shaders.RenderFrame => #27
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=10000, Light(X=0, Y=0, Z=0))
    -> BehaviorSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #30
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=-13.5, Y=0, Z=-11))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
    #30 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
    #30 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=13.5, Y=0, Z=-11))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.666, Y=0, Width=0.333, Height=1)))
    #27 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
-> WorkflowOutput

WorkflowInput Source1 => #2
-> GroupWorkflow Task
    Disable SubscribeSubject Draw3DQuad => #0
    Disable SubscribeSubject QuadState
    -> Disable PropertyMapping(Ambient, Diffuse, Specular) => #2
    #0, #2 -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=60
      TranslationY=-33
      TranslationZ=-70
      ScaleX=1
      ScaleY=70
      ScaleZ=100
      MeshName=cube3d
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0

    WorkflowInput Source1
    -> GroupWorkflow "Standard Trial Settings"
        WorkflowInput Source1
        -> GroupWorkflow s2d25 => #1
            WorkflowInput Source1
            -> SpeedDiscSpecification2
              Trials
                SpeedDiscParameters2
                  Duration=2
                  Size=4.6542
                  Colour1=0
                  Colour2=1
                  numDots1=476
                  numDots2=476
                  dotLifeBool=0
                  dotLifetime=200
                  Contrast=1
                  VelocityXLeft=0
                  VelocityYLeft=0
                  CoherenceLeft=100
                  VelocityXRight=0
                  VelocityYRight=0
                  CoherenceRight=100
                  transXLeft=-100
                  transXRight=100
            -> GroupWorkflow EnsureSpeedDiscParameters
                WorkflowInput Source1
                -> ElementIndex => #1
                -> MemberSelector(Selector=Index) => #2
                #1 -> MemberSelector(Selector=Value.Duration) => #3
                ExternalizedMapping(Value(DisplayName=DotSize)) => #4
                ExternalizedMapping(Value(DisplayName=Colour1)) => #5
                ExternalizedMapping(Value(DisplayName=Colour2)) => #6
                ExternalizedMapping(Value(DisplayName=numDots1)) => #7
                ExternalizedMapping(Value(DisplayName=numDots2)) => #8
                ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
                ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
                ExternalizedMapping(Value(DisplayName=Contrast)) => #11
                ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
                ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
                ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
                ExternalizedMapping(Value(DisplayName=VelXright)) => #15
                ExternalizedMapping(Value(DisplayName=VelYright)) => #16
                ExternalizedMapping(Value(DisplayName=CohRight)) => #17
                ExternalizedMapping(Value(DisplayName=Duration)) => #18
                #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
                #1 -> MemberSelector(Selector=Value.Size) => #20
                #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
                #1 -> MemberSelector(Selector=Value.Colour1) => #22
                #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
                #1 -> MemberSelector(Selector=Value.Colour2) => #24
                #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
                #1 -> MemberSelector(Selector=Value.numDots1) => #26
                #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
                #1 -> MemberSelector(Selector=Value.numDots2) => #28
                #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
                #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
                #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
                #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
                #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
                #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
                #1 -> MemberSelector(Selector=Value.Contrast) => #35
                #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
                #32, #34, #36 -> Zip => #37
                #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
                #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
                #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
                #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
                #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
                #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
                #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
                #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
                #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
                #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
                #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
                #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
                #39, #41, #43, #45, #47, #49 -> Zip => #50
                #1 -> MemberSelector(Selector=Value.transXLeft) => #51
                ExternalizedMapping(Value(DisplayName=transXL)) => #52
                #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
                #1 -> MemberSelector(Selector=Value.transXRight) => #54
                ExternalizedMapping(Value(DisplayName=transXR)) => #55
                #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
                #53, #56 -> Zip => #57
                #30, #37, #50, #57 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.Item1 as Id,
                    Item1.Item2 as Duration,
                    Item1.Item3 as Size,
                    Item1.Item4 as Colour1,
                    Item1.Item5 as Colour2,
                    Item1.Item6 as numDots1,
                    Item1.Item7 as numDots2,
                    Item2.Item1 as dotLifeBool,
                    Item2.Item2 as dotLifetime,
                    Item2.Item3 as Contrast,
                    Item3.Item1 as VelXLeft,
                    Item3.Item2 as VelYLeft,
                    Item3.Item3 as CohLeft,
                    Item3.Item4 as VelXRight,
                    Item3.Item5 as VelYRight,
                    Item3.Item6 as CohRight,
                    Item4.Item1 as transXL,
                    Item4.Item2 as transXR)
                -> WorkflowOutput
            -> WorkflowOutput
        Source3=#1 -> WorkflowOutput
    -> CreateObservable CreateTrial => #6
        WorkflowInput Source1 => #0
        -> Unit => #1
        SubscribeSubject StandardSpeedsList
        -> PropertyMapping(StandardSpeedsList) => #3
        SubscribeSubject StandardSpeedsProbsList
        -> PropertyMapping(StandardSpeedsProbList) => #5
        SubscribeSubject SpeedDifferencesList
        -> PropertyMapping(SpeedDifferenceList) => #7
        SubscribeSubject SpeedDifferenceProbList
        -> PropertyMapping(SpeedDifferenceProbList) => #9
        SubscribeSubject PerfTrackList
        -> PropertyMapping(PerfTrackList) => #11
        #1, #3, #5, #7, #9, #11 -> TrialManager_SpeedDiscrimination
          StandardSpeedsList(float=16, float=32, float=64, float=128)
          StandardSpeedsProbList(float=25, float=25, float=25, float=25)
          SpeedDifferenceList(ArrayOfFloat(float=8, float=0.125), ArrayOfFloat(float=8, float=0.125), ArrayOfFloat(float=8, float=0.125), ArrayOfFloat(float=8, float=0.125))
          SpeedDifferenceProbList(ArrayOfFloat(float=100, float=0), ArrayOfFloat(float=100, float=0), ArrayOfFloat(float=100, float=0), ArrayOfFloat(float=100, float=0))
          PerfTrackList
            ArrayOfArrayOfInt(ArrayOfInt(int=0, int=0, int=0, int=0), ArrayOfInt(int=0, int=0, int=0, int=0))
            ArrayOfArrayOfInt(ArrayOfInt(int=0, int=0, int=0, int=0), ArrayOfInt(int=0, int=0, int=0, int=0))
            ArrayOfArrayOfInt(ArrayOfInt(int=0, int=0, int=0, int=0), ArrayOfInt(int=0, int=0, int=0, int=0))
            ArrayOfArrayOfInt(ArrayOfInt(int=0, int=0, int=0, int=0), ArrayOfInt(int=0, int=0, int=0, int=0))
          rightInARow(int=-1, int=-1, int=1, int=-1, int=1)
          maxInARow=5
          autoBias=false
          biasScaling=0
          pRightManual=0.5
          minPRight=0
        -> SelectMany ThisTrial
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2)
            -> BehaviorSubject TrialInfo
            #0 -> GroupWorkflow DotTextures
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1) => #1
                -> MemberSelector(Selector=Item1)
                -> PropertyMapping(LeftVelX) => #3
                #1 -> MemberSelector(Selector=Item2)
                -> PropertyMapping(RightVelX) => #5
                #3, #5 -> GroupWorkflow CreateTextures
                    SubscribeSubject Parameters
                    -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
                    SubscribeSubject Borders
                    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
                    SubscribeSubject DrawStimuli => #4
                    #3, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-360, Right=360, Bottom=-90, Top=90) => #5
                    Bonsai.Shaders.UpdateFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedTime)
                    -> Take(Count=1) => #8
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=VelYLeft) => #10
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=CohLeft)
                    -> PropertyMapping(Coherence) => #13
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=CohRight)
                    -> PropertyMapping(Coherence) => #16
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=VelYRight) => #18
                    ExternalizedMapping(Value(DisplayName=LeftVelX))
                    -> DoubleProperty(Value=32)
                    -> Skip(Count=1) => #21
                    #8, #21 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #25
                    ExternalizedMapping(Value(DisplayName=RightVelX))
                    -> DoubleProperty(Value=256)
                    -> Skip(Count=1) => #28
                    #8, #28 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #32
                    #10, #8 -> Zip
                    -> Multiply
                    -> PropertyMapping(VelY) => #35
                    #18, #8 -> Zip
                    -> Multiply
                    -> PropertyMapping(VelY) => #38
                    #5, #1, #25, #13, #35 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0.533333361)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-0.533333361, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0.533333361)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-0.533333361, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0.533333361)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-0.533333361, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0.533333361)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-0.533333361, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureLeft
                    -> WorkflowOutput
                    #5, #1, #32, #16, #38 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-4.266667)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-4.266667, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-4.266667)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-4.266667, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-4.266667)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=-4.266667, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-4.266667)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=-4.266667, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureRight
                -> Unit
                -> BehaviorSubject ReadyToDraw => #8
                SubscribeSubject EndStimulus => #9
                #8, #9 -> TakeUntil
                -> WorkflowOutput

            GroupWorkflow "Calculate ISI Duration"
                SubscribeSubject "ISI Lower"
                -> PropertyMapping(Lower) => #1
                SubscribeSubject "ISI Upper"
                -> PropertyMapping(Upper) => #3
                #1, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=5, Upper=10)
                -> Bonsai.Numerics.Distributions.Sample
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> WorkflowOutput
            -> PropertyMapping(DueTime) => #5
            GroupWorkflow GetResponse => #6
                SubscribeSubject ResponseWindowDelay
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT1.5S, Period=PT0S) => #3
                SubscribeSubject ResponseWindowLength
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(ResponseWindowLength) => #6
                #6, #3 -> SelectMany Response(Description="Workflow that encapsulates the various possible response paradigms") => #7
                    WorkflowInput Source1 => #0
                    -> Condition "Passive Trial Type" => #1
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=1))
                        -> WorkflowOutput
                    GroupWorkflow "Passive Trial Response" => #2
                        SubscribeSubject TrialInfo
                        -> MemberSelector(Selector=Item3) => #1
                        -> Condition "Left Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #4
                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #6
                        #6, #4 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #1 -> Condition "Right Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #13
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #15
                        #15, #13 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)

                        SubscribeSubject StimulusEnded
                        -> WorkflowOutput
                    #2, #1 -> SubscribeWhen
                    -> Unit => #4
                    #0 -> Condition "Active-any Trial Type" => #5
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=2))
                        -> WorkflowOutput
                    GroupWorkflow "Active-any Trial Response" => #6
                        SubscribeSubject LeftLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=-1) => #2
                        SubscribeSubject RightLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=1) => #5
                        #2, #5 -> Amb
                        -> Condition GaveResponse? => #7
                            WorkflowInput Source1
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> Condition LeftFaster
                            SubscribeSubject TrialInfo
                            -> MemberSelector(Selector=Item3)
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #10
                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #12
                        #12, #10 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #7 -> Condition RightFaster
                            SubscribeSubject TrialInfo
                            -> MemberSelector(Selector=Item3)
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #19
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #21
                        #21, #19 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)

                        SubscribeSubject StimulusEnded
                        -> WorkflowOutput
                    #6, #5 -> SubscribeWhen
                    -> Unit => #8
                    #0 -> Condition "Active-noabort Trial Type" => #9
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=3))
                        -> WorkflowOutput
                    GroupWorkflow "Active-noabort Trial Response" => #10
                        Disable ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Disable Timer(DueTime=PT5S, Period=PT0S)
                        -> Disable FloatProperty(Value=0)

                        SubscribeSubject StimulusEnded
                        -> WorkflowOutput

                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #6
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #8
                        SubscribeSubject TrialInfo
                        -> MemberSelector(Selector=Item3) => #10
                        -> Condition "Left Stimulus Faster" => #11
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        #11, #6 -> Zip
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #10 -> Condition "Right Stimulus Faster" => #16
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        #16, #8 -> Zip
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)
                    #10, #9 -> SubscribeWhen
                    -> Unit => #12
                    #0 -> Condition "Active Trial Type" => #13
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=4))
                        -> WorkflowOutput
                    ExternalizedMapping(ResponseWindowLength)
                    -> GroupWorkflow "Active Trial Response" => #15
                        ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Timer(DueTime=PT5S, Period=PT0S)
                        -> FloatProperty(Value=0) => #2
                        SubscribeSubject TrialInfo => #3
                        SubscribeSubject PerfTrackList
                        -> PropertyMapping(perfTracking(Selector=it)) => #5
                        SubscribeSubject LeftLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=-1) => #8
                        SubscribeSubject RightLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=1) => #11
                        #8, #11, #2 -> Amb => #12
                        #3, #12 -> Zip => #13
                        #13, #5 -> ComputeTrialResult_SpeedDiscrimination => #14
                          perfTracking
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                        -> MemberSelector(Selector=Item1)
                        -> MulticastSubject PerfTrackList
                        -> Unit => #17
                        #14 -> MemberSelector(Selector=Item2) => #18
                        -> Condition IncorrectResponse
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject IncorrectResponse => #21
                        #18 -> Condition LeftCorrect
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #24
                        #18 -> Condition RightCorrect
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #27
                        #18 -> Condition NoResponse
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject NoResponse => #30
                        #21, #24, #27, #30 -> Merge
                        -> Take(Count=1) => #32
                        #17, #32 -> Zip
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #18 -> MulticastSubject TrialResults
                    #15, #13 -> SubscribeWhen
                    -> Unit => #17
                    #4, #8, #12, #17 -> Merge
                    -> First
                    -> WorkflowOutput
                GroupWorkflow "Abort If Early Response" => #8
                    SubscribeSubject MotionDelay
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT0.5S, Period=PT0S)
                    -> BooleanProperty(Value=false) => #4
                    SubscribeSubject LeftLick
                    -> Skip(Count=1) => #6
                    SubscribeSubject RightLick
                    -> Skip(Count=1) => #8
                    #6, #8 -> Amb
                    -> BooleanProperty(Value=true) => #10
                    #4, #10 -> Amb
                    -> First
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Unit
                    -> BehaviorSubject AbortTrial
                    -> WorkflowOutput
                -> Bonsai.Shaders.SampleOnRenderFrame => #9
                #7, #9 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
                #9 -> MulticastSubject EndStimulus
                #8 -> FloatProperty(Value=1)
                -> MulticastSubject TimeoutTime
                -> Delay(DueTime=PT0.5S)
                -> FloatProperty(Value=1)
                -> MulticastSubject TimeoutTime
            GroupWorkflow TexturedModels
                GroupWorkflow DrawTexturedModels => #0
                    SubscribeSubject Draw3DStim => #0
                    -> Sink BindLeft => #1
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureLeft => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    SubscribeSubject Borders => #2
                    -> MemberSelector(Selector=Item1) => #3
                    #2 -> MemberSelector(Selector=Item2) => #4
                    #3, #4 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleY) => #7
                    #2 -> MemberSelector(Selector=Item3) => #8
                    #2 -> MemberSelector(Selector=Item4) => #9
                    #9, #8 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleX) => #12
                    SubscribeSubject Parameters => #13
                    -> MemberSelector(Selector=transXL)
                    -> PropertyMapping(TranslationX) => #15
                    #1, #15, #7, #12 -> IncludeWorkflow => #16
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-100
                      TranslationY=0
                      TranslationZ=0
                      ScaleX=720
                      ScaleY=180
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #0 -> Sink BindRight => #17
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureRight => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    #13 -> MemberSelector(Selector=transXR)
                    -> PropertyMapping(TranslationX) => #19
                    #17, #19, #7, #12 -> IncludeWorkflow => #20
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=100
                      TranslationY=0
                      TranslationZ=0
                      ScaleX=720
                      ScaleY=180
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #16, #20 -> Zip
                    -> WorkflowOutput
                SubscribeSubject ReadyToDraw
                -> Disable Skip(Count=10)
                -> Bonsai.Shaders.SampleOnRenderFrame => #3
                #0, #3 -> SubscribeWhen => #4
                SubscribeSubject EndStimulus => #5
                #4, #5 -> TakeUntil
                -> Last
                -> WorkflowOutput
            -> BehaviorSubject StimulusEnded => #8
            #8, #6 -> Zip
            -> Unit
            -> MulticastSubject TrialOver => #11
            #11, #5 -> Bonsai.Shaders.Delay(DueTime=PT7.109S) => #12
            SubscribeSubject TimeSinceLastLick
            -> Condition
                WorkflowInput Source1 => #0
                SubscribeSubject NoLickTime
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> Bonsai.Shaders.SampleOnRenderFrame => #15
            #12, #15 -> Zip
            -> Unit
            -> WorkflowOutput

            Disable GroupWorkflow "Draw Masking Planes"
                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=0
                  TranslationZ=-25
                  ScaleX=1000
                  ScaleY=2500
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="Background plane (stops flickering)")

                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=40
                  TranslationZ=-7
                  ScaleX=300
                  ScaleY=25
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="ceiling mask for pole")

            GroupWorkflow UpdateQuad
                SubscribeSubject Draw3DStim => #0
                SubscribeSubject StimulusEnded
                -> FloatProperty(Value=0) => #2
                SubscribeSubject ReadyToDraw
                -> Disable Skip(Count=10)
                -> Bonsai.Shaders.SampleOnRenderFrame => #5
                #0, #5 -> SubscribeWhen
                -> Take(Count=1)
                -> FloatProperty(Value=1) => #8
                #2, #8 -> Merge
                -> MulticastSubject QuadState
                -> WorkflowOutput

            Disable GroupWorkflow EndStimulus
                SubscribeSubject Parameters
                -> MemberSelector(Selector=Duration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT2S)
                -> WorkflowOutput
            -> Disable GroupWorkflow CheckRunTrial
                SubscribeSubject WheelSpeed => #0
                WorkflowInput Source1 => #1
                #0, #1 -> TakeUntil
                -> Average
                -> Condition
                    WorkflowInput Source1
                    -> LessThan(Operand=DoubleProperty(Value=-50))
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> MulticastSubject runTrial
                -> WorkflowOutput

            GroupWorkflow StimulusTimer
                SubscribeSubject StimulusDuration
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT10S)
                -> Unit
                -> WorkflowOutput
            -> BehaviorSubject EndStimulus
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil)

        GroupWorkflow "Check No Early Licks"
            SubscribeSubject MotionDelay
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0.5S, Period=PT0S)
            -> BooleanProperty(Value=false) => #4
            SubscribeSubject LeftLick
            -> Skip(Count=1) => #6
            SubscribeSubject RightLick
            -> Skip(Count=1) => #8
            #6, #8 -> Amb
            -> BooleanProperty(Value=true) => #10
            #4, #10 -> Amb
            -> First
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> BehaviorSubject AbortTrial
            -> WorkflowOutput
    SubscribeSubject TimeoutTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #9
    #6, #9 -> Bonsai.Shaders.Delay(DueTime=PT0S)
    -> BehaviorSubject TrialEnd
    -> Concat
    -> Repeat
    -> GroupWorkflow "Start and End Task"
        Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Control", SuppressRepetitions=false) => #0
        Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=false) => #1
        SubscribeSubject TrialEnd => #2
        #1, #2 -> Sample
        -> Bonsai.Shaders.SampleOnRenderFrame => #4
        WorkflowInput Source1 => #5
        #5, #0 -> SubscribeWhen => #6
        #6, #4 -> TakeUntil
        -> BehaviorSubject WriteMetadata
        -> Unit
        -> MulticastSubject EndWorkflow
        -> WorkflowOutput
ExternalizedMapping(StimulusID, MouseID) => #4
ExternalizedMapping(MetadataFileToLoad) => #5
#2, #5 -> GroupWorkflow "Performance Tracking"
    WorkflowInput Source1 => #0
    -> GroupWorkflow "Track Engagement"
        SubscribeSubject TrialResults => #0
        ExternalizedMapping(pEngagedThreshold) => #1
        WorkflowInput Source1 => #2
        -> IntProperty(Value=20) => #3
        -> PropertyMapping(maxListLength) => #4
        #3 -> PropertyMapping(Count) => #5
        #2 -> IntProperty(Value=0) => #6
        #6, #5 -> RepeatCount(Count=0)
        -> ToList
        -> PropertyMapping(trialResponses) => #9
        #0, #9, #4, #1 -> TrackTaskEngagement_SpeedDiscrimination(trialResponses="", maxListLength=20, pEngagedThreshold=0.8) => #10
        -> MemberSelector(Selector=Item1)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject DoTimeout
        #10 -> MemberSelector(Selector=Item2)

        SubscribeSubject DoTimeout
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> GroupWorkflow "Timeout Parameters"
            WorkflowInput Source1
            -> FloatProperty(Value=10)
            -> MulticastSubject TimeoutTime
            -> Delay(DueTime=PT8S)
            -> FloatProperty(Value=0)
            -> MulticastSubject TimeoutTime
            -> WorkflowOutput

        Bonsai.Windows.Input.KeyDown(Filter=P, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> MulticastSubject DoTimeout
    ExternalizedMapping(MetadataFileToLoad) => #2
    #0, #2 -> GroupWorkflow "Load Metadata"
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName(DisplayName=MetadataFileToLoad)) => #1
        #0, #1 -> Bonsai.IO.CsvReader(FileName=Passive_D1Stimuli.csv, ListSeparator=",", ScanPattern=%f, SkipRows=0) => #2
        -> ToList
        -> ReadMetaData_SpeedDiscrimination => #4
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject StandardSpeedsList
        #4 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject StandardSpeedsProbsList
        #4 -> MemberSelector(Selector=Item3)
        -> BehaviorSubject SpeedDifferencesList
        #4 -> MemberSelector(Selector=Item4)
        -> BehaviorSubject SpeedDifferenceProbList
        #4 -> MemberSelector(Selector=Item5)
        -> BehaviorSubject PerfTrackList
        #2 -> First
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it[0]
        -> BehaviorSubject TrialType

    GroupWorkflow "Write Metadata" => #4
        SubscribeSubject StandardSpeedsList => #0
        FloatProperty(Value=9999) => #1
        SubscribeSubject StandardSpeedsProbsList => #2
        #2, #1 -> Zip
        -> PrependFloatToList
        -> Take(Count=1) => #5
        IntProperty(Value=0) => #6
        Timer(DueTime=PT0.5S, Period=PT0.5S)
        -> IntProperty(Value=1) => #8
        #6, #8 -> Merge
        -> Accumulate
        -> Condition => #11
            WorkflowInput Source1 => #0
            SubscribeSubject SpeedDifferenceProbList
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it[0]
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #4
            #0, #4 -> LessThan(Operand=IntProperty(Value=4))
            -> WorkflowOutput
        SubscribeSubject StandardSpeedsList
        -> PropertyMapping(StandardSpeedsList) => #13
        SubscribeSubject SpeedDifferencesList
        -> PropertyMapping(SpeedDifferenceList) => #15
        SubscribeSubject SpeedDifferenceProbList
        -> PropertyMapping(SpeedDifferenceProbList) => #17
        #11, #13, #15, #17 -> WriteMetaData_SpeedDiscrimination => #18
          StandardSpeedsList(float=16, float=32, float=64, float=128, float=256)
          SpeedDifferenceList
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
            ArrayOfFloat(float=4, float=2, float=0.5, float=0.25)
          SpeedDifferenceProbList
            ArrayOfFloat(float=25, float=25, float=25, float=25)
            ArrayOfFloat(float=50, float=50, float=0, float=0)
            ArrayOfFloat(float=0, float=50, float=50, float=0)
            ArrayOfFloat(float=0, float=25, float=25, float=50)
            ArrayOfFloat(float=0, float=50, float=50, float=0)
        SubscribeSubject TrialType => #19
        #0, #19 -> Zip
        -> PrependFloatToList
        -> Take(Count=1) => #22
        #5, #22 -> SubscribeWhen => #23
        #23, #22 -> Zip => #24
        #18, #24 -> SubscribeWhen => #25
        #22, #23, #25 -> Merge => #26
        SubscribeSubject MetadataName
        -> PropertyMapping(FileName) => #28
        #26, #28 -> Bonsai.IO.CsvWriter(FileName=M99999_SDTraining_Metadata.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=false) => #5
    #4, #5 -> SubscribeWhen
#2, #4 -> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=SDTraining) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=M99999) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName

GroupWorkflow "Initialise Variables"
    GroupWorkflow Borders(Description="Set values for borders of display")
        ExternalizedMapping(Value(DisplayName=TopBorder))
        -> FloatProperty(Value=90)
        -> ReplaySubject Top(BufferSize=nil) => #2
        ExternalizedMapping(Value(DisplayName=BottomBorder))
        -> FloatProperty(Value=-90)
        -> ReplaySubject Bottom(BufferSize=nil) => #5
        ExternalizedMapping(Value(DisplayName=LeftBorder))
        -> FloatProperty(Value=-360)
        -> ReplaySubject Left(BufferSize=nil) => #8
        ExternalizedMapping(Value(DisplayName=RightBorder))
        -> FloatProperty(Value=360)
        -> ReplaySubject Right(BufferSize=nil) => #11
        #2, #5, #8, #11 -> Disable Zip
        -> CombineLatest
        -> ReplaySubject Borders(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Timing Variables"
        FloatProperty(Value=0.5)
        -> BehaviorSubject MotionDelay

        DoubleProperty(Value=5)
        -> BehaviorSubject "ISI Lower"

        DoubleProperty(Value=10)
        -> BehaviorSubject "ISI Upper"

        FloatProperty(Value=0.5)
        -> BehaviorSubject ResponseWindowDelay

        FloatProperty(Value=5)
        -> BehaviorSubject ResponseWindowLength

        DoubleProperty(Value=1000)
        -> BehaviorSubject NoLickTime

        FloatProperty(Value=2)
        -> BehaviorSubject StimulusDuration

        FloatProperty(Value=0)
        -> BehaviorSubject TimeoutTime

        BooleanProperty(Value=false)
        -> BehaviorSubject DoTimeout

    GroupWorkflow TrialOutcomes
        Unit
        -> BehaviorSubject IncorrectResponse

        Unit
        -> BehaviorSubject LeftCorrect

        Unit
        -> BehaviorSubject RightCorrect

        Unit
        -> BehaviorSubject NoResponse

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=0)
    -> BehaviorSubject runTrial

    Unit
    -> BehaviorSubject EndWorkflow

    Unit
    -> BehaviorSubject EndStimulus

GroupWorkflow SelectTrialBlock
    SubscribeSubject TrialType => #0
    -> Condition "Passive Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> GroupWorkflow "Passive Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=10)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=0)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=1.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput
    #0 -> Condition "Active-any Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=2))
        -> WorkflowOutput
    -> GroupWorkflow "Active-any Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=7)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=0)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput
    #0 -> Condition "Active-noabort Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=3))
        -> WorkflowOutput
    -> GroupWorkflow "Active-noabort Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=5)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=1)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput
    #0 -> Condition "Active Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=4))
        -> WorkflowOutput
    -> GroupWorkflow "Active Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=3)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=1)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #4, #2, #6 -> Zip
        -> WorkflowOutput

    GroupWorkflow "Manual Trial Type Selection"
        Bonsai.Windows.Input.KeyDown(Filter=Z, SuppressRepetitions=false)
        -> FloatProperty(Value=1) => #1
        Bonsai.Windows.Input.KeyDown(Filter=X, SuppressRepetitions=false)
        -> FloatProperty(Value=2) => #3
        Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
        -> FloatProperty(Value=3) => #5
        Bonsai.Windows.Input.KeyDown(Filter=V, SuppressRepetitions=false)
        -> FloatProperty(Value=4) => #7
        #1, #3, #5, #7 -> Merge
        -> BehaviorSubject lastKeyState
        -> BehaviorSubject delayKeyState

        SubscribeSubject delayKeyState
        -> First
        -> Delay(DueTime=PT0.5S)
        -> Unit
        -> BehaviorSubject TrialOver

    SubscribeSubject delayKeyState => #10
    SubscribeSubject TrialOver => #11
    #10, #11 -> Sample
    -> MulticastSubject TrialType

GroupWorkflow "Control and Give Reward"
    GroupWorkflow "Generate Reward Serial String"
        FloatProperty(Value=20)
        -> BehaviorSubject RightValveOpenTime

        FloatProperty(Value=20)
        -> BehaviorSubject LeftValveOpenTime

        StringProperty(Value=l) => #4
        SubscribeSubject LeftValveOpenTime
        -> PropertyMapping(Value)
        -> FloatProperty(Value=20)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression: it.ToString()
        #4, #8 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> BehaviorSubject LeftRewardString

        StringProperty(Value=r) => #12
        SubscribeSubject RightValveOpenTime
        -> PropertyMapping(Value)
        -> FloatProperty(Value=20)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
          Expression: it.ToString()
        #12, #16 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> BehaviorSubject RightRewardString

    SubscribeSubject LeftCorrect => #1
    SubscribeSubject LeftRewardString
    -> PropertyMapping(Value) => #3
    #1, #3 -> StringProperty(Value=l20)
    -> MulticastSubject SerialToSend

    SubscribeSubject RightCorrect => #6
    SubscribeSubject RightRewardString
    -> PropertyMapping(Value) => #8
    #6, #8 -> StringProperty(Value=r20)
    -> MulticastSubject SerialToSend

    StringProperty
    -> BehaviorSubject SerialToSend

    SubscribeSubject SerialToSend
    -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoInput, NewLine=\r)

    Bonsai.Windows.Input.KeyDown(Filter=K, SuppressRepetitions=false)
    -> StringProperty(Value=l20)
    -> MulticastSubject SerialToSend

    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> StringProperty(Value=r20)
    -> MulticastSubject SerialToSend

GroupWorkflow "Get Licks"
    Disable Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> Disable Unit
    -> Disable BehaviorSubject RightLick

    Disable Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> Disable Unit
    -> Disable BehaviorSubject LeftLick

    GroupWorkflow "Check For Recent Licks"
        SubscribeSubject LeftLick
        -> IntProperty(Value=1) => #1
        SubscribeSubject RightLick
        -> IntProperty(Value=1) => #3
        IntProperty(Value=0) => #4
        #1, #3, #4 -> Merge
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
        ExternalizedMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT0.05S)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #11
        #11, #7 -> CombineLatest
        -> Subtract
        -> Divide(Operand=DoubleProperty(Value=1000))
        -> BehaviorSubject TimeSinceLastLick

GroupWorkflow Arduino
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM3
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Bonsai.Shaders.SampleOnRenderFrame
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #5
    -> MemberSelector(Selector=Item1)
    #5 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #5 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick

    Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
    -> StringProperty(Value=l20)
    -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
    -> StringProperty(Value=r20)
    -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
