WorkflowBuilder(Version=2.7.1)
GroupWorkflow "Display And Resources"
    Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=3
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources => #5
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=false) => #6
    SubscribeSubject EndWorkflow
    -> Skip(Count=1) => #8
    #6, #8 -> Sample
    -> Bonsai.Shaders.Delay(DueTime=PT15S)
    -> Bonsai.Shaders.SampleOnRenderFrame => #11
    #5, #11 -> TakeUntil
    -> WorkflowOutput

    Bonsai.Shaders.UpdateFrame => #14
    -> PublishSubject DrawStimuli
    #14 -> PublishSubject DrawQuad

    Disable GroupWorkflow "Dome Render"
        Bonsai.Shaders.RenderFrame
        -> Disable GroupWorkflow FrameEventLoggers => #1
            WorkflowInput Source1 => #0
            SubscribeSubject WheelName
            -> PropertyMapping(FileName) => #2
            #0, #2 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_WheelLog.csv) => #3
            SubscribeSubject EyeName
            -> PropertyMapping(FileName) => #5
            #3, #5 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_EyeLog.csv) => #6
            SubscribeSubject TrialName
            -> PropertyMapping(FileName) => #8
            #6, #8 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_Trial.csv) => #9
            SubscribeSubject PDname
            -> PropertyMapping(FileName) => #11
            #9, #11 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_PDAsync.csv)
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=1000)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression:
            new(
            ViewMatrix as ViewMatrix,
            ProjectionMatrix as ProjectionMatrix,
            ViewMatrix.Row3.Yzw as Light)
        -> BehaviorSubject Draw3DStim
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
        -> GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
            ExternalizedMapping(Path)
            -> Bonsai.Dsp.MatrixReader(Path=meshmap_py_minus_hires.bin, Offset=0, SampleRate=10000000, ChannelCount=1001, BufferLength=3003, Depth=F32, Layout=RowMajor)
            -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
            -> Bonsai.Vision.Flip(Mode=Vertical)
            -> Bonsai.Shaders.LatestOnUpdateFrame
            -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
            -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
            -> WorkflowOutput

            Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
            -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

            Disable ExternalizedMapping(Path)
            -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
            -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
            -> Disable Bonsai.Vision.ConvertToImage
        -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
        #3 -> BehaviorSubject Draw3DQuad
        #1 -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)

    Disable Bonsai.Shaders.RenderFrame
    -> Disable GroupWorkflow FrameEventLoggers => #19
        WorkflowInput Source1 => #0
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #2
        #0, #2 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_WheelLog.csv) => #3
        SubscribeSubject EyeName
        -> PropertyMapping(FileName) => #5
        #3, #5 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_EyeLog.csv) => #6
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #8
        #6, #8 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_Trial.csv) => #9
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #11
        #9, #11 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_PDAsync.csv)
        -> WorkflowOutput
    -> Disable Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #21
      Expression:
        new(
        ViewMatrix as ViewMatrix,
        ProjectionMatrix as ProjectionMatrix,
        ViewMatrix.Row3.Yzw as Light)
    -> Disable BehaviorSubject Draw3DStim
    -> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    #21 -> Disable BehaviorSubject Draw3DQuad
    #19 -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)

    Bonsai.Shaders.RenderFrame => #27
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=10000, Light(X=0, Y=0, Z=0))
    -> BehaviorSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #30
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
    #30 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
    #30 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.000001669652114, Z=0), Translation(X=12, Y=0, Z=-9))
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.665, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
    #27 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    #27 -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject RenderFrameCount
-> WorkflowOutput

WorkflowInput Source1 => #2
ExternalizedMapping(StimulusID, MouseID) => #3
ExternalizedMapping(maxInARow(Category="Bias Settings"), pRightManual(Category="Bias Settings")) => #4
#2, #4 -> GroupWorkflow Task
    Disable SubscribeSubject Draw3DQuad => #0
    Disable SubscribeSubject QuadState
    -> Disable PropertyMapping(Ambient, Diffuse, Specular) => #2
    #0, #2 -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=60
      TranslationY=-33
      TranslationZ=-70
      ScaleX=1
      ScaleY=70
      ScaleZ=100
      MeshName=cube3d
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      RotationZ=0
      RotationY=0
      RotationX=0

    WorkflowInput Source1
    -> GroupWorkflow "Standard Trial Settings" => #5
        WorkflowInput Source1
        -> GroupWorkflow s2d25 => #1
            WorkflowInput Source1
            -> SpeedDiscSpecification2
              Trials
                SpeedDiscParameters2
                  Duration=2
                  Size=4.6542
                  Colour1=0
                  Colour2=1
                  numDots1=476
                  numDots2=476
                  dotLifeBool=0
                  dotLifetime=200
                  Contrast=1
                  VelocityXLeft=0
                  VelocityYLeft=0
                  CoherenceLeft=100
                  VelocityXRight=0
                  VelocityYRight=0
                  CoherenceRight=100
                  transXLeft=-100
                  transXRight=100
            -> GroupWorkflow EnsureSpeedDiscParameters
                WorkflowInput Source1
                -> ElementIndex => #1
                -> MemberSelector(Selector=Index) => #2
                #1 -> MemberSelector(Selector=Value.Duration) => #3
                ExternalizedMapping(Value(DisplayName=DotSize)) => #4
                ExternalizedMapping(Value(DisplayName=Colour1)) => #5
                ExternalizedMapping(Value(DisplayName=Colour2)) => #6
                ExternalizedMapping(Value(DisplayName=numDots1)) => #7
                ExternalizedMapping(Value(DisplayName=numDots2)) => #8
                ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
                ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
                ExternalizedMapping(Value(DisplayName=Contrast)) => #11
                ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
                ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
                ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
                ExternalizedMapping(Value(DisplayName=VelXright)) => #15
                ExternalizedMapping(Value(DisplayName=VelYright)) => #16
                ExternalizedMapping(Value(DisplayName=CohRight)) => #17
                ExternalizedMapping(Value(DisplayName=Duration)) => #18
                #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
                #1 -> MemberSelector(Selector=Value.Size) => #20
                #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
                #1 -> MemberSelector(Selector=Value.Colour1) => #22
                #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
                #1 -> MemberSelector(Selector=Value.Colour2) => #24
                #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
                #1 -> MemberSelector(Selector=Value.numDots1) => #26
                #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
                #1 -> MemberSelector(Selector=Value.numDots2) => #28
                #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
                #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
                #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
                #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
                #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
                #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
                #1 -> MemberSelector(Selector=Value.Contrast) => #35
                #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
                #32, #34, #36 -> Zip => #37
                #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
                #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
                #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
                #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
                #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
                #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
                #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
                #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
                #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
                #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
                #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
                #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
                #39, #41, #43, #45, #47, #49 -> Zip => #50
                #1 -> MemberSelector(Selector=Value.transXLeft) => #51
                ExternalizedMapping(Value(DisplayName=transXL)) => #52
                #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
                #1 -> MemberSelector(Selector=Value.transXRight) => #54
                ExternalizedMapping(Value(DisplayName=transXR)) => #55
                #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
                #53, #56 -> Zip => #57
                #30, #37, #50, #57 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.Item1 as Id,
                    Item1.Item2 as Duration,
                    Item1.Item3 as Size,
                    Item1.Item4 as Colour1,
                    Item1.Item5 as Colour2,
                    Item1.Item6 as numDots1,
                    Item1.Item7 as numDots2,
                    Item2.Item1 as dotLifeBool,
                    Item2.Item2 as dotLifetime,
                    Item2.Item3 as Contrast,
                    Item3.Item1 as VelXLeft,
                    Item3.Item2 as VelYLeft,
                    Item3.Item3 as CohLeft,
                    Item3.Item4 as VelXRight,
                    Item3.Item5 as VelYRight,
                    Item3.Item6 as CohRight,
                    Item4.Item1 as transXL,
                    Item4.Item2 as transXR)
                -> WorkflowOutput
            -> WorkflowOutput
        Source3=#1 -> WorkflowOutput
    SubscribeSubject TimeoutOver => #6
    ExternalizedMapping(maxInARow, pRightManual) => #7
    #5, #7 -> CreateObservable CreateTrial => #8
        WorkflowInput Source1 => #0
        -> Unit => #1
        SubscribeSubject SpeedPairsArray
        -> PropertyMapping(SpeedPairsArray) => #3
        ExternalizedMapping(maxInARow, pRightManual) => #4
        #1, #3, #4 -> TrialManager_SD_2024
          SpeedPairsArray
            ArrayOfFloat(float=512, float=64, float=512, float=64)
            ArrayOfFloat(float=16, float=16, float=64, float=64)
            ArrayOfFloat(float=25, float=25, float=25, float=25)
          itrial=0
          rightInARow(int=-1, int=1, int=-1)
          maxInARow=3
          pRightManual=0.5
        -> SelectMany ThisTrial
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2)
            -> BehaviorSubject RightStimulusFasterFlag
            #0 -> GroupWorkflow DotTextures
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1) => #1
                -> MemberSelector(Selector=Item1)
                -> PropertyMapping(LeftVelX) => #3
                #1 -> MemberSelector(Selector=Item2)
                -> PropertyMapping(RightVelX) => #5
                #3, #5 -> GroupWorkflow CreateTextures
                    SubscribeSubject Parameters
                    -> PropertyMapping(Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
                    SubscribeSubject Borders
                    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
                    SubscribeSubject DrawStimuli => #4
                    #3, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-360, Right=360, Bottom=-90, Top=90) => #5
                    Bonsai.Shaders.UpdateFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedTime)
                    -> Take(Count=1) => #8
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=VelYLeft) => #10
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=CohLeft)
                    -> PropertyMapping(Coherence) => #13
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=CohRight)
                    -> PropertyMapping(Coherence) => #16
                    SubscribeSubject Parameters
                    -> MemberSelector(Selector=VelYRight) => #18
                    ExternalizedMapping(Value(DisplayName=LeftVelX))
                    -> DoubleProperty(Value=64)
                    -> Skip(Count=1) => #21
                    #8, #21 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #25
                    #21 -> MulticastSubject LeftVel
                    ExternalizedMapping(Value(DisplayName=RightVelX))
                    -> DoubleProperty(Value=512)
                    -> Skip(Count=1) => #29
                    #8, #29 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #33
                    #10, #8 -> Zip
                    -> Multiply
                    -> PropertyMapping(VelY) => #36
                    #18, #8 -> Zip
                    -> Multiply
                    -> PropertyMapping(VelY) => #39
                    #29 -> MulticastSubject RightVel
                    SubscribeSubject Contrast
                    -> PropertyMapping(ColorA) => #42
                    #5, #1, #25, #13, #36, #42 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #44 -> Take(Count=1)
                            -> StringProperty(Value=dotsMOVE)
                            -> Condition NotPause => #49
                                SubscribeSubject TrialType
                                -> NotEqual(Operand=FloatProperty(Value=99))
                                -> WorkflowOutput
                            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                            #49 -> FloatProperty(Value=1)
                            -> MulticastSubject QuadState
                            #19, #43 -> Delay(DueTime=PT0.5S) => #53
                            #53, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #55
                            #42, #46, #55, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #57
                            #57, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-1.06666672)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureLeft
                    -> WorkflowOutput
                    #5, #1, #33, #16, #39, #42 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-8.533334)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-8.533334)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-8.533334)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-8.533334)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=1)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureRight
                -> Unit
                -> BehaviorSubject ReadyToDraw => #8
                SubscribeSubject EndStimulus => #9
                #8, #9 -> TakeUntil
                -> WorkflowOutput
            #0 -> Take(Count=1)
            -> StringProperty(Value=stimON)
            -> Condition NotPause => #6
                SubscribeSubject TrialType
                -> NotEqual(Operand=FloatProperty(Value=99))
                -> WorkflowOutput
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            #6 -> FloatProperty(Value=1)
            -> MulticastSubject QuadState
            #6 -> Delay(DueTime=PT0.2S)
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            #0 -> MemberSelector(Selector=Item3)
            -> MulticastSubject CurrentSpeedPairIndex

            GroupWorkflow "Calculate ISI Duration"
                SubscribeSubject "ISI Lower"
                -> PropertyMapping(Lower) => #1
                SubscribeSubject "ISI Upper"
                -> PropertyMapping(Upper) => #3
                #1, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
                -> Bonsai.Numerics.Distributions.Sample
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> WorkflowOutput
            -> PropertyMapping(DueTime) => #16
            GroupWorkflow GetResponse => #17
                SubscribeSubject ResponseWindowDelay
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT0.7S, Period=PT0S) => #3
                GroupWorkflow "Abort If Early Response" => #4
                    SubscribeSubject MotionDelay
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT0.5S, Period=PT0S)
                    -> BooleanProperty(Value=false) => #4
                    SubscribeSubject LeftLick
                    -> Skip(Count=1) => #6
                    SubscribeSubject RightLick
                    -> Skip(Count=1) => #8
                    #6, #8 -> Amb
                    -> BooleanProperty(Value=true)
                    -> Condition => #11
                        SubscribeSubject PreMotionAbortBool
                        -> WorkflowOutput
                    #4, #11 -> Amb
                    -> First
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Unit
                    -> BehaviorSubject AbortTrial
                    -> WorkflowOutput
                -> Bonsai.Shaders.SampleOnRenderFrame => #5
                -> MulticastSubject EndStimulus
                #4 -> FloatProperty(Value=1)
                -> MulticastSubject TimeoutTime
                -> Delay(DueTime=PT0.5S)
                -> FloatProperty(Value=1)
                -> MulticastSubject TimeoutTime
                SubscribeSubject ResponseWindowLength
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(ResponseWindowLength) => #14
                #3, #14 -> SelectMany Response(Description="Workflow that encapsulates the various possible response paradigms") => #15
                    WorkflowInput Source1 => #0
                    -> Condition "Passive Trial Type" => #1
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=1))
                        -> WorkflowOutput
                    GroupWorkflow "Passive Trial Response" => #2
                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #1
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #3
                        ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Timer(DueTime=PT5S, Period=PT0S)
                        -> FloatProperty(Value=0) => #6
                        SubscribeSubject LeftLick
                        -> Skip(Count=1)
                        -> Condition "Left Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> FloatProperty(Value=-1) => #12
                        SubscribeSubject RightLick
                        -> Skip(Count=1)
                        -> Condition "Right Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> FloatProperty(Value=1) => #18
                        #12, #18, #6 -> Amb
                        -> MulticastSubject Response => #20
                        SubscribeSubject RightStimulusFasterFlag => #21
                        -> Condition "Left Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #24
                        #1, #24 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #24 -> FloatProperty(Value=-1) => #29
                        #21 -> Condition "Right Stimulus Faster"
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #32
                        #3, #32 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)
                        #32 -> FloatProperty(Value=1) => #37
                        #29, #37 -> Merge
                        -> MulticastSubject TrialResults => #39
                        #39, #20 -> Zip
                        -> WorkflowOutput
                    #2, #1 -> SubscribeWhen
                    -> Unit => #4
                    #0 -> Condition "Active-any Trial Type" => #5
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=2))
                        -> WorkflowOutput
                    GroupWorkflow "Active-any Trial Response" => #6
                        SubscribeSubject LeftLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=-1) => #2
                        SubscribeSubject RightLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=1) => #5
                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #7
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #9
                        ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Timer(DueTime=PT9S, Period=PT0S) => #11
                        -> FloatProperty(Value=0) => #12
                        #2, #5, #12 -> Amb => #13
                        -> Condition GaveResponse?
                            WorkflowInput Source1
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> Take(Count=1) => #15
                        -> Condition LeftFaster
                            SubscribeSubject RightStimulusFasterFlag
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> FloatProperty(Value=-1) => #19
                        #7, #19 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        #15 -> Condition RightFaster
                            SubscribeSubject RightStimulusFasterFlag
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> FloatProperty(Value=1) => #27
                        #9, #27 -> SubscribeWhen
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)
                        #13 -> Condition NoResponse
                            WorkflowInput Source1
                            -> Equal(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> FloatProperty(Value=3) => #33
                        #33, #27, #19 -> Merge
                        -> MulticastSubject TrialResults => #35
                        #13 -> First
                        -> MulticastSubject Response => #37
                        #11 -> Unit => #38
                        SubscribeSubject StimulusEnded
                        -> Unit => #40
                        #38, #40 -> Merge => #41
                        #41, #37, #35 -> Zip
                        -> Unit
                        -> WorkflowOutput
                    #6, #5 -> SubscribeWhen
                    -> Unit => #8
                    #0 -> Condition "Active-noabort Trial Type" => #9
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=3))
                        -> WorkflowOutput
                    GroupWorkflow "Active-noabort Trial Response" => #10
                        ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Timer(DueTime=PT5S, Period=PT0S) => #1
                        -> FloatProperty(Value=0) => #2
                        SubscribeSubject StimulusEnded
                        -> Unit => #4
                        SubscribeSubject LeftLick
                        -> Skip(Count=1) => #6
                        SubscribeSubject RightLick
                        -> Skip(Count=1) => #8
                        SubscribeSubject RightStimulusFasterFlag => #9
                        -> Condition "Left Stimulus Faster" => #10
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        #10, #6 -> Zip
                        -> Unit
                        -> MulticastSubject LeftCorrect
                        -> Take(Count=1)
                        -> FloatProperty(Value=-1) => #15
                        #6 -> FloatProperty(Value=-1) => #16
                        #9 -> Condition "Right Stimulus Faster" => #17
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        #17, #8 -> Zip
                        -> Unit
                        -> MulticastSubject RightCorrect
                        -> Take(Count=1)
                        -> FloatProperty(Value=1) => #22
                        #8 -> FloatProperty(Value=1) => #23
                        #23, #16, #2 -> Amb
                        -> MulticastSubject Response => #25
                        #1 -> FloatProperty(Value=3)
                        -> Condition NoResp => #27
                            SubscribeSubject Response
                            -> Equal(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        #1 -> Unit => #28
                        #4, #28 -> Merge => #29
                        #1 -> FloatProperty(Value=0)
                        -> Condition RespNotCorrect => #31
                            SubscribeSubject Response
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        #15, #22, #27, #31 -> Merge
                        -> MulticastSubject TrialResults => #33
                        #25, #33, #29 -> Zip
                        -> Unit
                        -> WorkflowOutput
                    #10, #9 -> SubscribeWhen
                    -> Unit => #12
                    #0 -> Condition "Active Trial Type" => #13
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=4))
                        -> WorkflowOutput
                    GroupWorkflow Pause => #14
                        WorkflowInput Source1 => #0
                        -> Unit
                        -> MulticastSubject NoResponse
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #0 -> IntProperty(Value=0)
                        -> MulticastSubject Response
                        #0 -> IntProperty(Value=3)
                        -> MulticastSubject TrialResults
                    ExternalizedMapping(ResponseWindowLength)
                    -> GroupWorkflow "Active Trial Response" => #16
                        ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                        -> Timer(DueTime=PT5S, Period=PT0S)
                        -> FloatProperty(Value=0) => #2
                        SubscribeSubject RightStimulusFasterFlag => #3
                        SubscribeSubject LeftLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=-1) => #6
                        SubscribeSubject RightLick
                        -> Skip(Count=1)
                        -> FloatProperty(Value=1) => #9
                        #6, #9, #2 -> Amb => #10
                        #3, #10 -> Zip
                        -> ComputeResult_SpeedDiscrim2024
                        -> Disable ComputeTrialResult_SpeedDiscrimination => #13
                          perfTracking
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                            ArrayOfArrayOfInt
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                              ArrayOfInt(int=0, int=0, int=0, int=0)
                        -> Condition IncorrectResponse
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject IncorrectResponse => #16
                        #13 -> Condition LeftCorrect
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=-1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject LeftCorrect => #19
                        #13 -> Condition RightCorrect
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject RightCorrect => #22
                        #13 -> Condition NoResponse
                            WorkflowInput Source1
                            -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> Unit
                        -> MulticastSubject NoResponse => #25
                        #16, #19, #22, #25 -> Merge
                        -> Take(Count=1)
                        -> Unit
                        -> WorkflowOutput
                        #13 -> MulticastSubject TrialResults
                        #10 -> MulticastSubject Response
                    #16, #13 -> SubscribeWhen
                    -> Unit => #18
                    #0 -> StringProperty(Value=respOPEN)
                    -> Condition NotPause
                        SubscribeSubject TrialType
                        -> NotEqual(Operand=FloatProperty(Value=99))
                        -> WorkflowOutput
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #0 -> Condition Pause => #22
                        SubscribeSubject TrialType
                        -> Equal(Operand=FloatProperty(Value=99))
                        -> WorkflowOutput
                    #14, #22 -> SubscribeWhen
                    -> Unit => #24
                    #4, #8, #12, #18, #24 -> Merge
                    -> First => #26
                    -> WorkflowOutput
                    #26 -> StringProperty(Value=respCLOSED)
                    -> Condition NotPause
                        SubscribeSubject TrialType
                        -> NotEqual(Operand=FloatProperty(Value=99))
                        -> WorkflowOutput
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    SubscribeSubject TrialType => #31
                    #26, #31 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #33
                    SubscribeSubject Response => #34
                    #26, #34 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #36
                    SubscribeSubject TrialResults => #37
                    #26, #37 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #39
                    SubscribeSubject LeftVel => #40
                    #26, #40 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #42
                    SubscribeSubject RightVel => #43
                    #26, #43 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #45
                    #33, #36, #39, #42, #45 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(Item1 as TrialType,
                        Item2 as Response,
                        Item3 as TrialResult,
                        Item4 as LeftVel,
                        Item5 as RightVel)
                    -> Condition NotPause
                        SubscribeSubject TrialType
                        -> NotEqual(Operand=FloatProperty(Value=99))
                        -> WorkflowOutput
                    -> Disable IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    -> MulticastSubject TrialParams

                    Disable SubscribeSubject TrialType => #51
                    Disable SubscribeSubject Response
                    -> Disable Skip(Count=1) => #53
                    Disable SubscribeSubject TrialResults => #54
                    Disable SubscribeSubject LeftVel => #55
                    Disable SubscribeSubject RightVel => #56
                    #51, #53, #54, #55, #56 -> Disable Zip
                    -> Disable IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                #15, #5 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            GroupWorkflow TexturedModels
                GroupWorkflow DrawTexturedModels => #0
                    SubscribeSubject Draw3DStim => #0
                    -> Sink BindLeft => #1
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureLeft => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    SubscribeSubject Borders => #2
                    -> MemberSelector(Selector=Item1) => #3
                    #2 -> MemberSelector(Selector=Item2) => #4
                    #3, #4 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleY) => #7
                    #2 -> MemberSelector(Selector=Item3) => #8
                    #2 -> MemberSelector(Selector=Item4) => #9
                    #9, #8 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleX) => #12
                    SubscribeSubject Parameters => #13
                    -> MemberSelector(Selector=transXL)
                    -> PropertyMapping(TranslationX) => #15
                    #1, #15, #7, #12 -> IncludeWorkflow => #16
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-100
                      TranslationY=0
                      TranslationZ=0
                      ScaleX=720
                      ScaleY=180
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #0 -> Sink BindRight => #17
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureRight => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    #13 -> MemberSelector(Selector=transXR)
                    -> PropertyMapping(TranslationX) => #19
                    #17, #19, #7, #12 -> IncludeWorkflow => #20
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=100
                      TranslationY=0
                      TranslationZ=0
                      ScaleX=720
                      ScaleY=180
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #16, #20 -> Zip
                    -> WorkflowOutput
                SubscribeSubject ReadyToDraw
                -> Disable Skip(Count=10)
                -> Bonsai.Shaders.SampleOnRenderFrame => #3
                #0, #3 -> SubscribeWhen => #4
                SubscribeSubject EndStimulus => #5
                #4, #5 -> TakeUntil
                -> Last => #7
                -> WorkflowOutput
                #7 -> StringProperty(Value=stimOFF)
                -> Condition NotPause => #10
                    SubscribeSubject TrialType
                    -> NotEqual(Operand=FloatProperty(Value=99))
                    -> WorkflowOutput
                -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                #10 -> FloatProperty(Value=0)
                -> MulticastSubject QuadState
            -> Unit
            -> BehaviorSubject StimulusEnded => #20
            #20, #17 -> Zip
            -> Unit => #22
            #22, #16 -> Bonsai.Shaders.Delay(DueTime=PT2.229S)
            -> MulticastSubject TrialOver => #24
            #20 -> GroupWorkflow GetTrialAverageRunningSpeed
                SubscribeSubject WheelInput => #0
                -> Bonsai.Dsp.Difference(Order=1) => #1
                DoubleProperty(Value=1000) => #2
                WorkflowInput Source1 => #3
                #1, #3 -> TakeUntil
                -> Average
                -> Divide(Operand=DoubleProperty(Value=16.8)) => #6
                #0 -> TimeInterval
                -> MemberSelector(Selector=Interval.TotalMilliseconds) => #8
                #8, #3 -> TakeUntil
                -> Average => #10
                #2, #10 -> CombineLatest
                -> Divide => #12
                #6, #12 -> Zip
                -> Multiply
                -> MulticastSubject TrialMeanRunningSpeed
            SubscribeSubject TimeSinceLastLick
            -> Condition
                WorkflowInput Source1 => #0
                SubscribeSubject NoLickTime
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput
            -> Bonsai.Shaders.SampleOnRenderFrame => #28
            #24, #28 -> Zip
            -> Unit
            -> WorkflowOutput

            Disable GroupWorkflow "Draw Masking Planes"
                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=0
                  TranslationZ=-25
                  ScaleX=1000
                  ScaleY=2500
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="Background plane (stops flickering)")

                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=40
                  TranslationZ=-7
                  ScaleX=300
                  ScaleY=25
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="ceiling mask for pole")

            GroupWorkflow StimulusTimer
                SubscribeSubject StimulusDuration
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT3S)
                -> Unit
                -> WorkflowOutput
            -> BehaviorSubject EndStimulus
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil)

        GroupWorkflow "Check No Early Licks"
            SubscribeSubject MotionDelay
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0.5S, Period=PT0S)
            -> BooleanProperty(Value=false) => #4
            SubscribeSubject LeftLick
            -> Skip(Count=1) => #6
            SubscribeSubject RightLick
            -> Skip(Count=1) => #8
            #6, #8 -> Amb
            -> BooleanProperty(Value=true) => #10
            #4, #10 -> Amb
            -> First
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> BehaviorSubject AbortTrial
            -> WorkflowOutput
    #8, #6 -> Zip
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject TrialEnd
    -> Concat
    -> Repeat
    -> GroupWorkflow "Start and End Task"
        Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #0
        Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #1
        SubscribeSubject TrialEnd => #2
        #1, #2 -> Sample
        -> Bonsai.Shaders.SampleOnRenderFrame => #4
        WorkflowInput Source1 => #5
        #5, #0 -> SubscribeWhen => #6
        #6, #4 -> TakeUntil
        -> BehaviorSubject WriteMetadata
        -> Unit
        -> MulticastSubject EndWorkflow
        -> WorkflowOutput

    SubscribeSubject itrial => #15
    SubscribeSubject TrialEnd
    -> IntProperty(Value=1) => #17
    #17, #15 -> WithLatestFrom
    -> Add
    -> MulticastSubject itrial
#2 -> GroupWorkflow "Performance Tracking"
    WorkflowInput Source1 => #0
    ExternalizedMapping(pEngagedThreshold) => #1
    #0, #1 -> GroupWorkflow "Track Engagement"
        SubscribeSubject TrialResults => #0
        ExternalizedMapping(pEngagedThreshold) => #1
        IntProperty(Value=0) => #2
        ExternalizedMapping(Value(DisplayName=EngageListLength))
        -> IntProperty(Value=500000) => #4
        -> PropertyMapping(maxListLength) => #5
        #4 -> PropertyMapping(Count) => #6
        #2, #6 -> RepeatCount(Count=0)
        -> ToList
        -> PropertyMapping(trialResponses) => #9
        #0, #9, #5, #1 -> TrackTaskEngagement_SpeedDiscrimination(trialResponses(int=3, int=1, int=-1, int=1, int=0, int=0, int=1, int=0, int=3, int=0, int=3), maxListLength=500000, pEngagedThreshold=0) => #10
        -> MemberSelector(Selector=Item1)
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject DoTimeout
        #10 -> MemberSelector(Selector=Item2)

        Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Shift", SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> MulticastSubject DoTimeout

        SubscribeSubject DoTimeout => #18
        -> Condition => #19
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(DueTime(DisplayName=TimeoutTime)) => #20
        #19, #20 -> Delay(DueTime=PT1S) => #21
        #19 -> IntProperty(Value=1) => #22
        SubscribeSubject TimeoutCounter => #23
        #22, #23 -> WithLatestFrom
        -> Add
        -> MulticastSubject TimeoutCounter
        #18 -> Condition => #27
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #21, #27 -> Amb
        -> Unit
        -> BehaviorSubject TimeoutOver

        IntProperty(Value=0)
        -> BehaviorSubject TimeoutCounter

    Disable GroupWorkflow "Write Metadata" => #3
        SubscribeSubject StandardSpeedsList => #0
        FloatProperty(Value=9999) => #1
        SubscribeSubject StandardSpeedsProbsList => #2
        #2, #1 -> Zip
        -> PrependFloatToList
        -> Take(Count=1) => #5
        IntProperty(Value=0) => #6
        Timer(DueTime=PT0.5S, Period=PT0.5S)
        -> IntProperty(Value=1) => #8
        #6, #8 -> Merge
        -> Accumulate
        -> Condition => #11
            WorkflowInput Source1 => #0
            SubscribeSubject SpeedDifferenceProbList
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it[0]
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #4
            #0, #4 -> LessThan(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        SubscribeSubject StandardSpeedsList
        -> PropertyMapping(StandardSpeedsList) => #13
        SubscribeSubject SpeedDifferencesList
        -> PropertyMapping(SpeedDifferenceList) => #15
        SubscribeSubject SpeedDifferenceProbList
        -> PropertyMapping(SpeedDifferenceProbList) => #17
        #11, #13, #15, #17 -> WriteMetaData_SpeedDiscrimination => #18
          StandardSpeedsList(float=16, float=32, float=64, float=128)
          SpeedDifferenceList(ArrayOfFloat(float=32, float=0.125), ArrayOfFloat(float=32, float=0.125), ArrayOfFloat(float=32, float=0.125), ArrayOfFloat(float=32, float=0.125))
          SpeedDifferenceProbList(ArrayOfFloat(float=100, float=0), ArrayOfFloat(float=NaN, float=NaN), ArrayOfFloat(float=NaN, float=NaN), ArrayOfFloat(float=NaN, float=NaN))
        SubscribeSubject TrialType => #19
        #0, #19 -> Zip
        -> PrependFloatToList
        -> Take(Count=1) => #22
        #5, #22 -> SubscribeWhen => #23
        #23, #22 -> Zip => #24
        #18, #24 -> SubscribeWhen => #25
        #22, #23, #25 -> Merge => #26
        SubscribeSubject MetadataName
        -> PropertyMapping(FileName) => #28
        #26, #28 -> Bonsai.IO.CsvWriter(FileName=M24020_SDTraining_Metadata.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    Disable Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #4
    #3, #4 -> Disable SubscribeWhen

    Disable SubscribeSubject TrialMeanRunningSpeed
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression: Convert.ToSingle(it)
    Disable FloatProperty(Value=5) => #9
    Disable CreateEmptyFloatList
    -> Disable PropertyMapping(theList) => #11
    #8, #11 -> Disable AddToFloatList(theList(float=0, float=0, float=0, float=0, float=0, float=0, float=0, float=0, float=0, float=0)) => #12
    #12, #9 -> Disable CombineLatest
    -> Disable calcPropInListGreaterThanFloat

    GroupWorkflow "Initialise Performance Tracking"
        SubscribeSubject nSpeedPairs
        -> PropertyMapping(Count) => #1
        Timer(DueTime=PT0S, Period=PT0.1S)
        -> IntProperty(Value=0) => #3
        #3, #1 -> Take(Count=4)
        -> ToList => #5
        -> BehaviorSubject TrialCountsList
        #5 -> BehaviorSubject TrialCorrectList
        #5 -> BehaviorSubject RightResponseList
        #5 -> BehaviorSubject TrialEngagedList

    GroupWorkflow "Update Performance Tracking"
        SubscribeSubject CurrentSpeedPairIndex
        -> Skip(Count=1) => #1
        SubscribeSubject TrialResults => #2
        SubscribeSubject Response
        -> Skip(Count=1) => #4
        #4, #2, #1 -> Zip => #5
        SubscribeSubject TrialCorrectList
        -> PropertyMapping(TrialCorrectList) => #7
        SubscribeSubject RightResponseList
        -> PropertyMapping(RightResponseList) => #9
        SubscribeSubject TrialCountsList
        -> PropertyMapping(TrialCountsList) => #11
        SubscribeSubject TrialEngagedList
        -> PropertyMapping(TrialEngagedList) => #13
        #5, #11, #7, #9, #13 -> TrackPerformance_SD_2024 => #14
          TrialCountsList(int=2, int=2, int=3, int=4)
          TrialCorrectList(int=1, int=0, int=1, int=2)
          RightResponseList(int=0, int=0, int=0, int=0)
          TrialEngagedList(int=2, int=1, int=1, int=4)
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialCountsList
        #14 -> MemberSelector(Selector=Item2)
        -> MulticastSubject TrialCorrectList
        #14 -> MemberSelector(Selector=Item3)
        -> BehaviorSubject pCorrectList
        #14 -> MemberSelector(Selector=Item4)
        -> BehaviorSubject pEngagedList

    GroupWorkflow "Performance BarChart"
        SubscribeSubject pCorrectList => #0
        SubscribeSubject CurrentSpeedPairIndex
        -> Skip(Count=1) => #2
        #0, #2 -> Zip => #3
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: it.Item1[it.Item2]
        #3 -> MemberSelector(Selector=Item2) => #5
        #4, #5 -> Zip => #6
        GroupWorkflow InitialisePerformancePlot => #7
            IntProperty(Value=0) => #0
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> IntProperty(Value=1)
            -> Accumulate => #3
            SubscribeSubject nSpeedPairs
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=3) => #7
            #0, #7 -> Merge => #8
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> DoubleProperty(Value=0) => #10
            SubscribeSubject nSpeedPairs
            -> PropertyMapping(Count) => #12
            #10, #12 -> Take(Count=4) => #13
            #13, #8 -> Zip
            -> WorkflowOutput
        #6, #7 -> Merge
        -> WorkflowOutput
    -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Stack, Capacity=nil, Min=0, Max=1)

    GroupWorkflow "Engaged BarChart"
        SubscribeSubject pEngagedList => #0
        SubscribeSubject CurrentSpeedPairIndex
        -> Skip(Count=1) => #2
        #0, #2 -> Zip => #3
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: it.Item1[it.Item2]
        #3 -> MemberSelector(Selector=Item2) => #5
        #4, #5 -> Zip => #6
        GroupWorkflow InitialisePerformancePlot => #7
            IntProperty(Value=0) => #0
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> IntProperty(Value=1)
            -> Accumulate => #3
            SubscribeSubject nSpeedPairs
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=3) => #7
            #0, #7 -> Merge => #8
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> DoubleProperty(Value=0) => #10
            SubscribeSubject nSpeedPairs
            -> PropertyMapping(Count) => #12
            #10, #12 -> Take(Count=4) => #13
            #13, #8 -> Zip
            -> WorkflowOutput
        #6, #7 -> Merge
        -> WorkflowOutput
    -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Stack, Capacity=nil, Min=0, Max=1)
#2, #3 -> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=SDTraining) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=M24020) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName
ExternalizedMapping("Task Parameters File") => #8
#8, #2 -> GroupWorkflow "Load Metadata"
    ExternalizedMapping(FileName(DisplayName="Task Parameters File")) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> Bonsai.IO.CsvReader(FileName=newMetadataTet.csv, ScanPattern="%f,%f,%f", SkipRows=1) => #2
    -> MemberSelector(Selector=Item1)
    -> ToArray => #4
    -> MemberSelector(Selector=Length)
    -> BehaviorSubject nSpeedPairs
    #2 -> MemberSelector(Selector=Item2)
    -> ToArray
    -> Delay(DueTime=PT0.5S) => #9
    #2 -> MemberSelector(Selector=Item3)
    -> ToArray
    -> Delay(DueTime=PT1S) => #12
    #4, #9, #12 -> Merge
    -> ToArray
    -> BehaviorSubject SpeedPairsArray

ExternalizedMapping
  ISILower(Category=Timing)
  "ISI Upper"(Category=Timing)
  RespWindowDelay(Category=Timing)
  RespWindowLength(Category=Timing)
  NoLickTime(Category=Timing)
  TimeoutTime(Category=PerfTracking)
  PreMotionAbortBool
-> GroupWorkflow "Initialise Variables"
    GroupWorkflow Borders(Description="Set values for borders of display")
        ExternalizedMapping(Value(DisplayName=TopBorder))
        -> FloatProperty(Value=90)
        -> ReplaySubject Top(BufferSize=nil) => #2
        ExternalizedMapping(Value(DisplayName=BottomBorder))
        -> FloatProperty(Value=-90)
        -> ReplaySubject Bottom(BufferSize=nil) => #5
        ExternalizedMapping(Value(DisplayName=LeftBorder))
        -> FloatProperty(Value=-360)
        -> ReplaySubject Left(BufferSize=nil) => #8
        ExternalizedMapping(Value(DisplayName=RightBorder))
        -> FloatProperty(Value=360)
        -> ReplaySubject Right(BufferSize=nil) => #11
        #2, #5, #8, #11 -> Disable Zip
        -> CombineLatest
        -> ReplaySubject Borders(BufferSize=nil)
        -> WorkflowOutput

    ExternalizedMapping(ISILower, "ISI Upper", RespWindowDelay, RespWindowLength, NoLickTime, TimeoutTime)
    -> GroupWorkflow "Timing Variables"
        FloatProperty(Value=0.5)
        -> BehaviorSubject MotionDelay

        ExternalizedMapping(Value(DisplayName=ISILower))
        -> DoubleProperty(Value=2)
        -> BehaviorSubject "ISI Lower"

        ExternalizedMapping(Value(DisplayName="ISI Upper"))
        -> DoubleProperty(Value=3)
        -> BehaviorSubject "ISI Upper"

        ExternalizedMapping(Value(DisplayName=RespWindowDelay))
        -> FloatProperty(Value=0.7)
        -> BehaviorSubject ResponseWindowDelay

        ExternalizedMapping(Value(DisplayName=RespWindowLength))
        -> FloatProperty(Value=6)
        -> BehaviorSubject ResponseWindowLength

        ExternalizedMapping(Value(DisplayName=NoLickTime))
        -> DoubleProperty(Value=0)
        -> BehaviorSubject NoLickTime

        FloatProperty(Value=2)
        -> BehaviorSubject StimulusDuration

        ExternalizedMapping(Value(DisplayName=TimeoutTime))
        -> FloatProperty(Value=0)
        -> BehaviorSubject TimeoutTime

        BooleanProperty(Value=false)
        -> BehaviorSubject DoTimeout

    GroupWorkflow TrialOutcomes
        Unit
        -> BehaviorSubject IncorrectResponse

        Unit
        -> BehaviorSubject LeftCorrect

        Unit
        -> BehaviorSubject RightCorrect

        Unit
        -> BehaviorSubject NoResponse

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0)
    -> BehaviorSubject runTrial

    Unit
    -> BehaviorSubject EndWorkflow

    Unit
    -> BehaviorSubject EndStimulus

    StringProperty
    -> BehaviorSubject LeftRewardString

    StringProperty
    -> BehaviorSubject RightRewardString

    StringProperty
    -> BehaviorSubject SerialToSend

    FloatProperty(Value=0)
    -> BehaviorSubject Response

    DoubleProperty(Value=0)
    -> BehaviorSubject LeftVel

    DoubleProperty(Value=0)
    -> BehaviorSubject RightVel

    FloatProperty(Value=1)
    -> BehaviorSubject Contrast

    ExternalizedMapping(Value(DisplayName=PreMotionAbortBool, Category=PerfTracking))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject PreMotionAbortBool

    DoubleProperty(Value=0)
    -> BehaviorSubject TrialMeanRunningSpeed

    IntProperty(Value=0)
    -> BehaviorSubject itrial

    IntProperty(Value=99)
    -> BehaviorSubject TrialType

    IntProperty(Value=0)
    -> BehaviorSubject CurrentSpeedPairIndex

GroupWorkflow SelectTrialBlock
    SubscribeSubject TrialType => #0
    -> Condition "Passive Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> GroupWorkflow "Passive Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=10)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=0)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=1.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #0 -> FloatProperty(Value=12)
        -> MulticastSubject ResponseWindowLength => #8
        #0 -> FloatProperty(Value=1)
        -> MulticastSubject Contrast => #10
        #4, #2, #6, #8, #10 -> Zip
        -> WorkflowOutput
    -> StringProperty(Value=Passive) => #3
    #0 -> Condition "Active-any Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=2))
        -> WorkflowOutput
    -> GroupWorkflow "Active-any Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=7)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=0)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #0 -> FloatProperty(Value=9)
        -> MulticastSubject ResponseWindowLength => #8
        #0 -> FloatProperty(Value=1)
        -> MulticastSubject Contrast => #10
        #4, #2, #6, #8, #10 -> Zip
        -> WorkflowOutput
    -> StringProperty(Value=ActiveAny) => #6
    #0 -> Condition "Active-noabort Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=3))
        -> WorkflowOutput
    -> GroupWorkflow "Active-noabort Trial Settings"
        WorkflowInput Source1 => #0
        -> DoubleProperty(Value=-1)
        -> MulticastSubject NoLickTime => #2
        #0 -> FloatProperty(Value=5)
        -> MulticastSubject StimulusDuration => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #0 -> FloatProperty(Value=7)
        -> MulticastSubject ResponseWindowLength => #8
        #0 -> FloatProperty(Value=1) => #9
        -> MulticastSubject Contrast => #10
        #2, #4, #6, #8, #10, #9 -> Zip
        -> WorkflowOutput
    -> StringProperty(Value=ActiveNoAbort) => #9
    #0 -> Condition "Active Trial Type"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=4))
        -> WorkflowOutput
    -> GroupWorkflow "Active Trial Settings"
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=3)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=1)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.7)
        -> MulticastSubject ResponseWindowDelay => #6
        #0 -> FloatProperty(Value=5)
        -> MulticastSubject ResponseWindowLength => #8
        #0 -> FloatProperty(Value=1)
        -> MulticastSubject Contrast => #10
        #4, #2, #6, #8, #10 -> Zip
        -> WorkflowOutput
    -> StringProperty(Value=Active) => #12
    #0 -> Condition Pause
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=99))
        -> WorkflowOutput
    -> GroupWorkflow PauseSettings
        WorkflowInput Source1 => #0
        -> FloatProperty(Value=1)
        -> MulticastSubject StimulusDuration => #2
        #0 -> DoubleProperty(Value=0)
        -> MulticastSubject NoLickTime => #4
        #0 -> FloatProperty(Value=0.5)
        -> MulticastSubject ResponseWindowDelay => #6
        #0 -> FloatProperty(Value=1)
        -> MulticastSubject ResponseWindowLength => #8
        #0 -> FloatProperty(Value=0)
        -> MulticastSubject Contrast => #10
        #4, #2, #6, #8, #10 -> Zip
        -> WorkflowOutput
    -> StringProperty(Value=Pause) => #15
    #15, #12, #9, #6, #3 -> Merge
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow "Manual Trial Type Selection"
        Bonsai.Windows.Input.KeyDown(Filter=Z, SuppressRepetitions=false)
        -> FloatProperty(Value=1) => #1
        Bonsai.Windows.Input.KeyDown(Filter=X, SuppressRepetitions=false)
        -> FloatProperty(Value=2) => #3
        Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
        -> FloatProperty(Value=3) => #5
        Bonsai.Windows.Input.KeyDown(Filter=V, SuppressRepetitions=false)
        -> FloatProperty(Value=4) => #7
        Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false)
        -> FloatProperty(Value=99) => #9
        #1, #3, #5, #7, #9 -> Merge
        -> BehaviorSubject lastKeyState
        -> BehaviorSubject delayKeyState

        SubscribeSubject delayKeyState
        -> First
        -> Delay(DueTime=PT0.5S)
        -> Unit
        -> BehaviorSubject TrialOver

    SubscribeSubject delayKeyState => #19
    SubscribeSubject TrialOver => #20
    #19, #20 -> Sample
    -> MulticastSubject TrialType

GroupWorkflow "Control and Give Reward"
    StringProperty(Value=l) => #0
    ExternalizedMapping(FileName(DisplayName=l_RewardLUT, Category=Reward))
    -> GroupWorkflow l_GetValveOpenTime
        ExternalizedMapping(FileName)
        -> Bonsai.IO.CsvReader(FileName=testLUT.csv, ListSeparator="", ScanPattern="%f,%f", SkipRows=0) => #1
        -> MemberSelector(Selector=Item1)
        -> ToList => #3
        #1 -> MemberSelector(Selector=Item2)
        -> ToList => #5
        SubscribeSubject l_RewardVolume
        -> PropertyMapping(Value)
        -> FloatProperty(Value=3.5) => #8
        #5, #8 -> CombineLatest
        -> FindListIndex => #10
        #3, #10 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1[Item2]
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
      Expression: it.ToString()
    #0, #3 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1+it.Item2
    -> MulticastSubject LeftRewardString

    StringProperty(Value=r) => #7
    ExternalizedMapping(FileName(DisplayName=r_RewardLUT, Category=Reward))
    -> GroupWorkflow r_GetValveOpenTime
        ExternalizedMapping(FileName)
        -> Bonsai.IO.CsvReader(FileName=testLUT.csv, ListSeparator="", ScanPattern="%f,%f", SkipRows=0) => #1
        -> MemberSelector(Selector=Item1)
        -> ToList => #3
        #1 -> MemberSelector(Selector=Item2)
        -> ToList => #5
        SubscribeSubject r_RewardVolume
        -> PropertyMapping(Value)
        -> FloatProperty(Value=3.5) => #8
        #5, #8 -> CombineLatest
        -> FindListIndex => #10
        #3, #10 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1[Item2]
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression: it.ToString()
    #7, #10 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1+it.Item2
    -> MulticastSubject RightRewardString

    SubscribeSubject LeftCorrect
    -> StringProperty => #15
    SubscribeSubject LeftRewardString => #16
    #15, #16 -> CombineLatest
    -> Skip(Count=1)
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject SerialToSend
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject RightCorrect
    -> StringProperty => #23
    SubscribeSubject RightRewardString => #24
    #23, #24 -> CombineLatest
    -> Skip(Count=1)
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject SerialToSend
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    Bonsai.Windows.Input.KeyDown(Filter=O, SuppressRepetitions=false)
    -> StringProperty(Value=l20) => #31
    SubscribeSubject LeftRewardString => #32
    #31, #32 -> CombineLatest
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject SerialToSend => #35
    StringProperty(Value=m) => #36
    #36, #35 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1+it.Item2
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    Bonsai.Windows.Input.KeyDown(Filter=P, SuppressRepetitions=false)
    -> StringProperty(Value=r20) => #41
    SubscribeSubject RightRewardString => #42
    #41, #42 -> CombineLatest
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject SerialToSend => #45
    StringProperty(Value=m) => #46
    #46, #45 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1+it.Item2
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    ExternalizedMapping(Value(DisplayName=l_rewardVol, Category=Reward))
    -> FloatProperty(Value=3.5)
    -> BehaviorSubject l_RewardVolume

    ExternalizedMapping(Value(DisplayName=r_rewardVol, Category=Reward))
    -> FloatProperty(Value=3.5)
    -> BehaviorSubject r_RewardVolume

GroupWorkflow TimeSinceLastLick
    Disable Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> Disable Unit
    -> Disable BehaviorSubject RightLick

    Disable Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> Disable Unit
    -> Disable BehaviorSubject LeftLick

    GroupWorkflow "Check For Recent Licks"
        SubscribeSubject LeftLick
        -> IntProperty(Value=1) => #1
        SubscribeSubject RightLick
        -> IntProperty(Value=1) => #3
        IntProperty(Value=0) => #4
        #1, #3, #4 -> Merge
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
        ExternalizedMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT0.05S)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #11
        #11, #7 -> CombineLatest
        -> Subtract
        -> Divide(Operand=DoubleProperty(Value=1000))
        -> BehaviorSubject TimeSinceLastLick

GroupWorkflow Arduino
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM5
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
    -> IntProperty(Value=1)
    -> Accumulate

    Disable Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Disable Parse(Pattern="%i,%i")
    -> Disable Retry
    -> Disable BehaviorSubject PDandAsync
    -> Disable MemberSelector(Selector=Item1)

GroupWorkflow Logging
    GroupWorkflow InitialiseLogging_AndRespWindow
        Disable StringProperty(Value=StartSession)
        -> Disable Take(Count=1)
        -> Disable GroupWorkflow LicksLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
            SubscribeSubject Licks => #0
            ExternalizedMapping(Overwrite) => #1
            ExternalizedMapping(Suffix) => #2
            SubscribeSubject FilenamePrefix => #3
            StringProperty(Value=_Licks) => #4
            #3, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> PropertyMapping(FileName) => #9
            #9, #1, #2, #0 -> Bonsai.IO.CsvWriter(FileName=eddTest_SDTraining_Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
        -> Disable SubscribeWhen

        Disable StringProperty(Value=StartSession)
        -> Disable Take(Count=1)

    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #1
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_Wheel) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #8, #0, #1, #10 -> Bonsai.IO.CsvWriter(FileName=M24020_SDTraining_Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #2
    #1, #2 -> SubscribeWhen
    GroupWorkflow LicksLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #4
        SubscribeSubject LickLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject FilenamePrefix => #3
        StringProperty(Value=_Licks) => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #9
        #9, #1, #2, #0 -> Bonsai.IO.CsvWriter(FileName=M24020_SDTraining_Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #4, #2 -> SubscribeWhen
    GroupWorkflow EventsLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #6
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_Events) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #8
        SubscribeSubject EventsLog => #9
        #8, #0, #1, #9 -> Bonsai.IO.CsvWriter(FileName=M24020_SDTraining_Events.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
        #9 -> MemberSelector(Selector=Event)
    #6, #2 -> SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #8
        SubscribeSubject TrialParams => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #2
        #0, #2 -> Zip => #3
        ExternalizedMapping(Overwrite) => #4
        ExternalizedMapping(Suffix) => #5
        SubscribeSubject FilenamePrefix => #6
        StringProperty(Value=_TrialParams) => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #12
        SubscribeSubject ArduinoTime => #13
        #3, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression:
            new(Item1.Item1.TrialType as TrialType,
            Item1.Item1.Response as Response,
            Item1.Item1.TrialResult as TrialResult,
            Item1.Item1.LeftVel as LeftVel,
            Item1.Item1.RightVel as RightVel,
            Item2 as ArduinoTime,
            Item1.Item2 as BonsaiTime)
        #12, #4, #5, #15 -> Bonsai.IO.CsvWriter(FileName=M24020_SDTraining_TrialParams.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #8, #2 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #10
        SubscribeSubject VideoLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject FilenamePrefix => #3
        StringProperty(Value=_Video) => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #9
        #9, #1, #2, #0 -> Bonsai.IO.CsvWriter(FileName=M24020_SDTraining_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #10, #2 -> SubscribeWhen
    Disable GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #12
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_Photodiode) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #8, #0, #1, #10 -> Bonsai.IO.CsvWriter(FileName=M24020_SDTraining_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #12, #2 -> Disable SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #0, #3, #4, #2 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow LickLogging
        SubscribeSubject LeftLick => #0
        SubscribeSubject RightLick => #1
        #0, #1 -> CombineLatest => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom => #6
        #2 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #8
        #6, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as LeftLick, Item1.Item1.Item2 as RightLick, Item1.Item2.Item1 as LastSyncPulseTime, Item1.Item2.Item2 as ArduinoTime, Item2 as BonsaiTime)
        -> BehaviorSubject LickLog
        -> WorkflowOutput

    GroupWorkflow EventsLogging
        SubscribeSubject Events => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        Source1=#0, Source3=#2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        SubscribeSubject LastSyncPulseTime => #5
        #4, #5 -> Zip => #6
        #3, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Event, Item2.Item2 as LastSyncPulseTime, Item2.Item1 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject EventsLog
        -> WorkflowOutput

    GroupWorkflow LogResponseWindowInfo
        SubscribeSubject ResponseWindowDelay
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: it.ToString()
        StringProperty(Value=respDelay) => #2
        #2, #1 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

        SubscribeSubject ResponseWindowLength
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: it.ToString()
        StringProperty(Value=respSize) => #8
        #8, #7 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject ArduinoTime => #3
        SubscribeSubject VideoLEDAsync => #4
        #0, #2, #4 -> Zip => #5
        #5, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow IntialiseTrialParams
        FloatProperty(Value=0) => #0
        IntProperty(Value=0) => #1
        DoubleProperty(Value=0) => #2
        DoubleProperty(Value=0) => #3
        IntProperty(Value=0) => #4
        #4, #0, #1, #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as TrialType, Item2 as Response, Item3 as TrialResult, Item4 as LeftVel, Item5 as RightVel)
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams
        -> WorkflowOutput

    GroupWorkflow InitialiseEvents
        StringProperty
        -> Skip(Count=1)
        -> BehaviorSubject Events
        -> WorkflowOutput

    Disable GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

Disable GroupWorkflow "Fake Arduino for testing"
    IntProperty(Value=0)
    -> IntProperty(Value=0)
    -> BehaviorSubject WheelInput

    IntProperty(Value=0)
    -> BehaviorSubject LeftLick

    IntProperty(Value=0)
    -> BehaviorSubject RightLick

    IntProperty(Value=0)
    -> BehaviorSubject LastSyncPulseTime

    IntProperty(Value=0)
    -> BehaviorSubject Photodiode

    IntProperty(Value=0)
    -> BehaviorSubject ArduinoTime

    IntProperty(Value=0) => #13
    IntProperty(Value=0) => #14
    #14, #13 -> Zip
    -> BehaviorSubject PDandAsync

    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject LeftLick

    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject RightLick

GroupWorkflow Video => #18
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-9)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount
    #1 -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=496, Y=0, Width=552, Height=330))
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=1896, Y=90, Width=56, Height=42))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_video.avi, Selector=it)
    -> PropertyMapping(FileName) => #16
    #0, #16 -> Bonsai.Vision.VideoWriter => #17
      FileName=M24020_SDTraining_video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #18
    #17, #18 -> SubscribeWhen => #19
    #19, #16 -> Disable Bonsai.FFmpeg.VideoWriter(FileName=eddTest_SDTraining_video.avi, Suffix=Timestamp, Overwrite=false, FrameRate=30, OutputArguments="-vb 15M -vcodec mpeg4")
Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #19
#18, #19 -> SubscribeWhen

SubscribeSubject Draw3DStim => #21
SubscribeSubject QuadState
-> PropertyMapping(Ambient) => #23
#21, #23 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawModel.bonsai
  TranslationX=-28
  TranslationY=-16
  TranslationZ=-102
  ScaleX=10
  ScaleY=10
  ScaleZ=40
  MeshName=cube3d
  Ambient(X=0, Y=0, Z=0)
  Diffuse(X=0, Y=0, Z=0)
  Specular(X=0, Y=0, Z=0)
  SpecularExponent=0
  RotationZ=-71.16279
  RotationY=175.813965
  RotationX=-8.372093
