<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Value" DisplayName="SubjectID" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>M22999</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>C:\Users\edward.horrocks\Documents\{0}_SDmeta.csv</Format>
          <Selector>it</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ReplaySubject">
          <Name>MetaFileName</Name>
          <BufferSize xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvReader">
          <io:FileName>C:\Users\edward.horrocks\Documents\M22999_SDmeta.csv</io:FileName>
          <io:ScanPattern>%i,%s,%f</io:ScanPattern>
          <io:SkipRows>1</io:SkipRows>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Last" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item1</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Add">
          <Operand xsi:type="IntProperty">
            <Value>1</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>SessionNumber</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>TrialType</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Equal">
          <Operand xsi:type="StringProperty">
            <Value>activeany</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="FloatProperty">
            <Value>2</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>LastKeyState</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item3</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>OutputData</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>OutputData</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT1S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>MetaFileName</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\edward.horrocks\Documents\M22999_SDmeta.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>true</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Lickometer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Space</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="NoLickTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Period" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT2S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TimeInterval" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Interval.TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>lickometer</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="17" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvReader">
          <io:FileName>ratioProbsTest.csv</io:FileName>
          <io:ListSeparator>,</io:ListSeparator>
          <io:ScanPattern>%f</io:ScanPattern>
          <io:SkipRows>1</io:SkipRows>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>1</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:ToArray" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>1</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>ratioProbsTranspose.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetStandardSpeeds</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StandardSpeeds</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetStandardSpeedProbs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StandardSpeedProbs</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="13" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source4" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetSpeedRatios</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SpeedRatios</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it[8]</scr:Expression>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetSpeedRatioProbs</Name>
        <Description>Generates a list of lists of speed ratio probabilities, index as: [speed][ratio]</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SpeedRatioProbs</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it[0][10]</scr:Expression>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="13" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source4" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="6" To="15" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="16" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="16" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source3" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="23" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="31" To="34" Label="Source1" />
      <Edge From="31" To="35" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>